PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/TUTORIAL_04.xlsx', 'resources/payoff/payoff_43.csv', 'resources/alien1_a1.png', 'resources/alien1_a2.png', 'resources/alien1_deact.png', 'resources/alien1_norm.png', 'resources/alien1_sp.png', 'resources/alien2_a1.png', 'resources/alien2_a2.png', 'resources/alien2_deact.png', 'resources/alien2_norm.png', 'resources/alien2_sp.png', 'resources/alien3_a1.png', 'resources/alien3_a2.png', 'resources/alien3_deact.png', 'resources/alien3_norm.png', 'resources/alien3_sp.png', 'resources/alien4_a1.png', 'resources/alien4_a2.png', 'resources/alien4_deact.png', 'resources/alien4_norm.png', 'resources/alien4_sp.png', 'resources/black.png', 'resources/blank.png', 'resources/earth.jpg', 'resources/empty_token.png', 'resources/post_purpleplanet.jpg', 'resources/post_redplanet.jpg', 'resources/post_test.xlsx', 'resources/probe_alien_order.xlsx', 'resources/purpleplanet.jpg', 'resources/redplanet.jpg', 'resources/rocket1_a1.png', 'resources/rocket1_a2.png', 'resources/rocket1_deact.png', 'resources/rocket1_norm.png', 'resources/rocket1_sp.png', 'resources/rocket2_a1.png', 'resources/rocket2_a2.png', 'resources/rocket2_deact.png', 'resources/rocket2_norm.png', 'resources/rocket2_sp.png', 'resources/t.png', 'resources/TRY_02.csv', 'resources/tutalien1_a1.png', 'resources/tutalien1_a2.png', 'resources/tutalien1_d.png', 'resources/tutalien1_n.png', 'resources/tutalien1_s.png', 'resources/tutalien2_a1.png', 'resources/tutalien2_a2.png', 'resources/tutalien2_d.png', 'resources/tutalien2_n.png', 'resources/tutalien2_s.png', 'resources/tutalien3_a1.png', 'resources/tutalien3_a2.png', 'resources/tutalien3_d.png', 'resources/tutalien3_n.png', 'resources/tutalien3_s.png', 'resources/tutalien4_a1.png', 'resources/tutalien4_a2.png', 'resources/tutalien4_d.png', 'resources/tutalien4_n.png', 'resources/tutalien4_s.png', 'resources/tutgreenplanet.jpg', 'resources/TUTORIAL_01.xlsx', 'resources/TUTORIAL_02.csv', 'resources/tutrocket1_a1.png', 'resources/tutrocket1_a2.png', 'resources/tutrocket1_d.png', 'resources/tutrocket1_n.png', 'resources/tutrocket1_s.png', 'resources/tutrocket2_a1.png', 'resources/tutrocket2_a2.png', 'resources/tutrocket2_d.png', 'resources/tutrocket2_n.png', 'resources/tutrocket2_s.png', 'resources/tutyellowplanet.jpg', 'resources/payoff/payoff_1.csv', 'resources/payoff/payoff_2.csv', 'resources/payoff/payoff_3.csv', 'resources/payoff/payoff_4.csv', 'resources/payoff/payoff_11.csv', 'resources/payoff/payoff_12.csv', 'resources/payoff/payoff_13.csv', 'resources/payoff/payoff_21.csv', 'resources/payoff/payoff_22.csv', 'resources/payoff/payoff_23.csv', 'resources/payoff/payoff_31.csv', 'resources/payoff/payoff_32.csv', 'resources/payoff/payoff_33.csv', 'resources/payoff/payoff_41.csv', 'resources/payoff/payoff_42.csv', 'resources/payoff/payoff_test1.csv', 'resources/payoff/payoff_test2.csv', 'resources/payoff/payoff_test3.csv', 'resources/blank.png', 'resources/payoff/payoff_1.csv', 'resources/payoff/payoff_2.csv', 'resources/payoff/payoff_3.csv', 'resources/payoff/payoff_4.csv', 'resources/payoff/payoff_test1.csv', 'resources/payoff/payoff_test2.csv', 'resources/payoff/payoff_test3.csv', 'resources/alien1_a1.png', 'resources/alien1_a2.png', 'resources/alien1_deact.png', 'resources/alien1_norm.png', 'resources/alien1_sp.png', 'resources/alien2_a1.png', 'resources/alien2_a2.png', 'resources/alien2_deact.png', 'resources/alien2_norm.png', 'resources/alien2_sp.png', 'resources/alien3_a1.png', 'resources/alien3_a2.png', 'resources/alien3_deact.png', 'resources/alien3_norm.png', 'resources/alien3_sp.png', 'resources/alien4_a1.png', 'resources/alien4_a2.png', 'resources/alien4_deact.png', 'resources/alien4_norm.png', 'resources/alien4_sp.png', 'resources/black.png', 'resources/earth.jpg', 'resources/empty_token.png', 'resources/probe_alien_order.xlsx', 'resources/purpleplanet.jpg', 'resources/redplanet.jpg', 'resources/rocket1_a1.png', 'resources/rocket1_a2.png', 'resources/rocket1_deact.png', 'resources/rocket1_norm.png', 'resources/rocket1_sp.png', 'resources/rocket2_a1.png', 'resources/rocket2_a2.png', 'resources/rocket2_deact.png', 'resources/rocket2_norm.png', 'resources/rocket2_sp.png', 'resources/t.png', 'resources/t_old.png', 'resources/Thumbs.db', 'resources/tutalien1_a1.png', 'resources/tutalien1_a2.png', 'resources/tutalien1_d.png', 'resources/tutalien1_n.png', 'resources/tutalien1_s.png', 'resources/tutalien2_a1.png', 'resources/tutalien2_a2.png', 'resources/tutalien2_d.png', 'resources/tutalien2_n.png', 'resources/tutalien2_s.png', 'resources/tutalien3_a1.png', 'resources/tutalien3_a2.png', 'resources/tutalien3_d.png', 'resources/tutalien3_n.png', 'resources/tutalien3_s.png', 'resources/tutalien4_a1.png', 'resources/tutalien4_a2.png', 'resources/tutalien4_d.png', 'resources/tutalien4_n.png', 'resources/tutalien4_s.png', 'resources/tutgreenplanet.jpg', 'resources/TUTORIAL_01.csv', 'resources/tutrocket1_a1.png', 'resources/tutrocket1_a2.png', 'resources/tutrocket1_d.png', 'resources/tutrocket1_n.png', 'resources/tutrocket1_s.png', 'resources/tutrocket2_a1.png', 'resources/tutrocket2_a2.png', 'resources/tutrocket2_d.png', 'resources/tutrocket2_n.png', 'resources/tutrocket2_s.png', 'resources/tutyellowplanet.jpg']
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = Two step task
  keyboardBackend = ioHub
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Routines
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  Routine TUTORIAL_01
    RoutineSettingsComponent TUTORIAL_01
      backgroundFit = fill
      backgroundImg = C:/Users/Lucija/Desktop/2step+money/image/earth.jpg
      saveStartStop = False
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    ImageComponent background_1
      image [set every repeat] = $'resources/' + background
      pos = (0, -0.1)
      saveStartStop = False
      size = (1, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent text_Tut_01
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
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    KeyboardComponent key_resp_Tut_01
      allowedKeys = 'space', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l_img_Tut_01
      image [set every repeat] = $'resources/' + left_image
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent r_img_Tut_01
      image [set every repeat] = $'resources/' + right_image
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent middle_image_1
      image [set every repeat] = $'resources/' + middle_image
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine TRY_01
    RoutineSettingsComponent TRY_01
      saveStartStop = False
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    ImageComponent background_Try_01
      image [set every repeat] = resources/tutgreenplanet.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent l_img_Try_01
      image = $ALIEN_P1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent r_img_Try_01
      image = $ALIEN_P2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_Try_01
      allowedKeys = 'x','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TRY_01_selection
    RoutineSettingsComponent TRY_01_selection
      saveStartStop = False
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    CodeComponent code_Try_01
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_Try_01.keys == 'x':
            m_img_Try_01_selection1.setImage('resources/tutalien1_a1.png')
            m_img_Try_01_selection2.setImage('resources/tutalien1_a2.png')
            l_img_Try_01_selection1.setImage('resources/blank.png')
            l_img_Try_01_selection2.setImage('resources/blank.png')
            r_img_Try_01_selection1.setImage('resources/tutalien2_d.png')
            r_img_Try_01_selection2.setImage('resources/tutalien2_d.png')

        elif key_resp_Try_01.keys == 'm':
            m_img_Try_01_selection1.setImage('resources/tutalien2_a1.png')
            m_img_Try_01_selection2.setImage('resources/tutalien2_a2.png')
            l_img_Try_01_selection1.setImage('resources/tutalien1_d.png')
            l_img_Try_01_selection2.setImage('resources/tutalien1_d.png')
            r_img_Try_01_selection1.setImage('resources/blank.png')
            r_img_Try_01_selection2.setImage('resources/blank.png')

        else:
            l_img_Try_01_selection1.setImage('resources/tutalien1_d.png')
            l_img_Try_01_selection2.setImage('resources/tutalien1_d.png')
            r_img_Try_01_selection1.setImage('resources/tutalien2_d.png')
            r_img_Try_01_selection2.setImage('resources/tutalien2_d.png')
            m_img_Try_01_selection1.setImage('resources/blank.png')
            m_img_Try_01_selection2.setImage('resources/blank.png')
    ImageComponent background_Try_01_selection
      image = resources/tutgreenplanet.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent l_img_Try_01_selection1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent l_img_Try_01_selection2
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent r_img_Try_01_selection1
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent r_img_Try_01_selection2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent m_img_Try_01_selection1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent m_img_Try_01_selection2
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine TUTORIAL_02
    RoutineSettingsComponent TUTORIAL_02
      backgroundFit = fill
      backgroundImg = C:/Users/Lucija/Desktop/2step+money/image/earth.jpg
      saveStartStop = False
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    TextComponent text_Tut
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $instructions
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    KeyboardComponent key_resp_Tut
      allowedKeys = 'space', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent middle_image_2
      image [set every repeat] = $'resources/' + middle_image
      pos = (0, -0.02)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine TRY_02
    RoutineSettingsComponent TRY_02
      saveStartStop = False
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    ImageComponent background_Try_02
      image = resources/tutgreenplanet.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent l_img_Try_02
      image = $ALIEN_P1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent r_img_Try_02
      image = $ALIEN_P2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_Try_02
      allowedKeys = 'x','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TRY_02_selection
    RoutineSettingsComponent TRY_02_selection
      saveStartStop = False
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    CodeComponent code_Try_02
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_Try_02.keys == 'x':
            m_img_Try_02_selection1.setImage('resources/tutalien1_a1.png')
            m_img_Try_02_selection2.setImage('resources/tutalien1_a2.png')
            l_img_Try_02_selection1.setImage('resources/blank.png')
            l_img_Try_02_selection2.setImage('resources/blank.png')
            r_img_Try_02_selection1.setImage('resources/tutalien2_d.png')
            r_img_Try_02_selection2.setImage('resources/tutalien2_d.png')
            if key_resp_Try_02.keys == try_list:
                img_Try_02_result.setImage('resources/tutalien1_n.png')
                gold_Try_02.setImage('resources/t.png')
            else:
                img_Try_02_result.setImage('resources/tutalien1_n.png')
                gold_Try_02.setImage('resources/blank.png')

        elif key_resp_Try_02.keys == 'm':
            l_img_Try_02_selection1.setImage('resources/tutalien1_d.png')
            l_img_Try_02_selection2.setImage('resources/tutalien1_d.png')
            m_img_Try_02_selection1.setImage('resources/tutalien2_a1.png')
            m_img_Try_02_selection2.setImage('resources/tutalien2_a2.png')
            r_img_Try_02_selection1.setImage('resources/blank.png')
            r_img_Try_02_selection2.setImage('resources/blank.png')
            if key_resp_Try_02.keys == try_list:
                img_Try_02_result.setImage('resources/tutalien2_n.png')
                gold_Try_02.setImage('resources/t.png')
            else:
                img_Try_02_result.setImage('resources/tutalien2_n.png')
                gold_Try_02.setImage('resources/blank.png')
        else:
            l_img_Try_02_selection1.setImage('resources/tutalien1_n.png')
            l_img_Try_02_selection2.setImage('resources/tutalien1_n.png')
            r_img_Try_02_selection1.setImage('resources/tutalien2_n.png')
            r_img_Try_02_selection2.setImage('resources/tutalien2_n.png')
            m_img_Try_02_selection1.setImage('resources/blank.png')
            m_img_Try_02_selection2.setImage('resources/blank.png')
            img_Try_02_result.setImage('resources/blank.png')
            gold_Try_02.setImage('resources/blank.png')
    ImageComponent background_Try_02_selection
      image = resources/tutgreenplanet.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent m_img_Try_02_selection1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent m_img_Try_02_selection2
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent l_img_Try_02_selection1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent l_img_Try_02_selection2
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent r_img_Try_02_selection1
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent r_img_Try_02_selection2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent img_Try_02_result
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.91
      stopVal [duration (s)] = 0.59
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    ImageComponent gold_Try_02
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
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  Routine TUTORIAL_3_1
    RoutineSettingsComponent TUTORIAL_3_1
      backgroundFit = fill
      backgroundImg = C:/Users/Lucija/Desktop/2step+money/image/earth.jpg
      saveStartStop = False
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    TextComponent text_Tut_3
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        See, this alien shared treasure most of the times you asked, but not every time. Every alien has treasure in its mine, but they can't share every time. Some will be more likely to share because it is easier to dig right now.

        Press SPACE to continue.
    KeyboardComponent key_resp_Tut_3
      allowedKeys = 'space', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent middle_image_3
      image = resources/tutalien1_n.png
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine TUTORIAL_3_2
    RoutineSettingsComponent TUTORIAL_3_2
      backgroundFit = fill
      backgroundImg = C:/Users/Lucija/Desktop/2step+money/image/earth.jpg
      saveStartStop = False
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    TextComponent text_Tut_3_2
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can practice choosing now. You have 20 choices to try to figure out which alien has a good mine. Remember, key X is for the left alien, and key M is for the right alien.

        Click SPACE to start.
    KeyboardComponent key_resp_Tut_3_2
      allowedKeys = 'space', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TRY_03
    RoutineSettingsComponent TRY_03
      saveStartStop = False
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    ImageComponent background_Try_03
      image = resources/tutgreenplanet.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent l_img_Try_03
      image = $ALIEN_P1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent r_img_Try_03
      image = $ALIEN_P2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_Try_03
      allowedKeys = 'x','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TRY_03_selection
    RoutineSettingsComponent TRY_03_selection
      saveStartStop = False
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    CodeComponent code_Try_03
      Code Type = Both
      Begin JS Routine:
        // determine probability
        rand = Math.random();

        // define visual parameters based on choice
        if ((key_resp_Try_03.keys === "x")) {
            m_img_Try_03_selection1.setImage("resources/tutalien1_a1.png");
            m_img_Try_03_selection2.setImage("resources/tutalien1_a2.png");
            l_img_Try_03_selection1.setImage("resources/blank.png");
            l_img_Try_03_selection2.setImage("resources/blank.png");
            r_img_Try_03_selection1.setImage("resources/tutalien2_d.png");
            r_img_Try_03_selection2.setImage("resources/tutalien2_d.png");
            if ((rand  < 0.3)) {
                img_Try_03_result.setImage("resources/tutalien1_n.png");
                gold_Try_03.setImage("resources/t.png");
            } else {
                img_Try_03_result.setImage("resources/tutalien1_n.png");
                gold_Try_03.setImage("resources/blank.png");
            }
        } else {
            if ((key_resp_Try_03.keys === "m")) {
                l_img_Try_03_selection1.setImage("resources/tutalien1_d.png");
                l_img_Try_03_selection2.setImage("resources/tutalien1_d.png");
                m_img_Try_03_selection1.setImage("resources/tutalien2_a1.png");
                m_img_Try_03_selection2.setImage("resources/tutalien2_a2.png");
                r_img_Try_03_selection1.setImage("resources/blank.png");
                r_img_Try_03_selection2.setImage("resources/blank.png");
                if ((rand  < 0.8)) {
                    img_Try_03_result.setImage("resources/tutalien2_n.png");
                    gold_Try_03.setImage("resources/t.png");
                } else {
                    img_Try_03_result.setImage("resources/tutalien2_n.png");
                    gold_Try_03.setImage("resources/blank.png");
                }
            } else {
                l_img_Try_03_selection1.setImage("resources/tutalien1_n.png");
                l_img_Try_03_selection2.setImage("resources/tutalien1_n.png");
                r_img_Try_03_selection1.setImage("resources/tutalien2_n.png");
                r_img_Try_03_selection2.setImage("resources/tutalien2_n.png");
                m_img_Try_03_selection1.setImage("resources/blank.png");
                m_img_Try_03_selection2.setImage("resources/blank.png");
                img_Try_03_result.setImage("resources/blank.png");
                gold_Try_03.setImage("resources/blank.png");
            }
        }
      Begin Routine:
        # determine probability
        rand = random.random()

        # define visual parameters based on choice
        if key_resp_Try_03.keys == 'x':
            m_img_Try_03_selection1.setImage('resources/tutalien1_a1.png')
            m_img_Try_03_selection2.setImage('resources/tutalien1_a2.png')
            l_img_Try_03_selection1.setImage('resources/blank.png')
            l_img_Try_03_selection2.setImage('resources/blank.png')
            r_img_Try_03_selection1.setImage('resources/tutalien2_d.png')
            r_img_Try_03_selection2.setImage('resources/tutalien2_d.png')
            if rand < 0.3:
                img_Try_03_result.setImage('resources/tutalien1_n.png')
                gold_Try_03.setImage('resources/t.png')
            else:
                img_Try_03_result.setImage('resources/tutalien1_n.png')
                gold_Try_03.setImage('resources/blank.png')
        elif key_resp_Try_03.keys == 'm':
            l_img_Try_03_selection1.setImage('resources/tutalien1_d.png')
            l_img_Try_03_selection2.setImage('resources/tutalien1_d.png')
            m_img_Try_03_selection1.setImage('resources/tutalien2_a1.png')
            m_img_Try_03_selection2.setImage('resources/tutalien2_a2.png')
            r_img_Try_03_selection1.setImage('resources/blank.png')
            r_img_Try_03_selection2.setImage('resources/blank.png')
            if rand < 0.8:
                img_Try_03_result.setImage('resources/tutalien2_n.png')
                gold_Try_03.setImage('resources/t.png')
            else:
                img_Try_03_result.setImage('resources/tutalien2_n.png')
                gold_Try_03.setImage('resources/blank.png')
        else:
            l_img_Try_03_selection1.setImage('resources/tutalien1_n.png')
            l_img_Try_03_selection2.setImage('resources/tutalien1_n.png')
            r_img_Try_03_selection1.setImage('resources/tutalien2_n.png')
            r_img_Try_03_selection2.setImage('resources/tutalien2_n.png')
            m_img_Try_03_selection1.setImage('resources/blank.png')
            m_img_Try_03_selection2.setImage('resources/blank.png')
            img_Try_03_result.setImage('resources/blank.png')
            gold_Try_03.setImage('resources/blank.png')
    ImageComponent background_Try_03_selection
      image = resources/tutgreenplanet.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent m_img_Try_03_selection1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent m_img_Try_03_selection2
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent l_img_Try_03_selection1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent l_img_Try_03_selection2
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent r_img_Try_03_selection1
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent r_img_Try_03_selection2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent img_Try_03_result
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.91
      stopVal [duration (s)] = 0.59
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    ImageComponent gold_Try_03
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
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
  Routine TUTORIAL_04
    RoutineSettingsComponent TUTORIAL_04
      saveStartStop = False
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    TextComponent text_Try_04
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
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    ImageComponent middle_image_04
      image [set every repeat] = $'resources/' + middle_image
      pos = (0, -0.16)
      saveStartStop = False
      size [set every repeat] = size_middle_image
      startVal [time (s)] = 0.0
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    ImageComponent l_img_Try_04
      image [set every repeat] = $'resources/' + left_image
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent r_img_Try_04
      image [set every repeat] = $'resources/' + right_image
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_Try_04
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PRACTICE_rocket
    RoutineSettingsComponent PRACTICE_rocket
      saveStartStop = False
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    CodeComponent code_practice_rocket
      Code Type = Both
      End JS Routine:
        // determine transition
        trans = get_practice(0.7);

        // check if transition is rare
        rare_transition = 0;
        if ((trans === 3)) {
            rare_transition = 1;
        }

        // precreate some variables
        select_sp = true;
        show_alien = true;

        // define visual parameters based on choice
        if ((key_resp_practice.keys === "x")) {
            m_img_practice_selection1.setImage("resources/tutrocket1_a1.png");
            m_img_practice_selection2.setImage("resources/tutrocket1_a2.png");
            l_img_practice_selection1.setImage("resources/blank.png");
            l_img_practice_selection2.setImage("resources/blank.png");
            r_img_practice_selection1.setImage("resources/tutrocket2_d.png");
            r_img_practice_selection2.setImage("resources/tutrocket2_d.png");
            imgcenter_practice.setImage("resources/tutrocket1_d.png");
        } else {
            if ((key_resp_practice.keys === "m")) {
                l_img_practice_selection1.setImage("resources/tutrocket1_d.png");
                l_img_practice_selection2.setImage("resources/tutrocket1_d.png");
                m_img_practice_selection1.setImage("resources/tutrocket2_a1.png");
                m_img_practice_selection2.setImage("resources/tutrocket2_a2.png");
                r_img_practice_selection1.setImage("resources/blank.png");
                r_img_practice_selection2.setImage("resources/blank.png");
                imgcenter_practice.setImage("resources/tutrocket2_d.png");
                trans = (5 - trans);
            } else {
                l_img_practice_selection1.setImage("resources/tutrocket1_s.png");
                l_img_practice_selection2.setImage("resources/tutrocket1_s.png");
                r_img_practice_selection1.setImage("resources/tutrocket2_s.png");
                r_img_practice_selection2.setImage("resources/tutrocket2_s.png");
                m_img_practice_selection1.setImage("resources/blank.png");
                m_img_practice_selection2.setImage("resources/blank.png");
                select_sp = false;
                show_alien = false;
            }
        }

        // determine planet based on transition
        if (select_sp) {
            if ((trans === 2)) {
                planet = "yellow";
                bg.setImage("resources/tutyellowplanet.jpg");
                background_practice_alien_selection.setImage("resources/tutyellowplanet.jpg");
                if ((flip_sides === true)) {
                    l_a = "resources/tutalien4_n.png";
                    r_a = "resources/tutalien3_n.png";
                    left_probability = p4;
                    right_probability = p3;
                    left_alien_practice.setImage(l_a);
                    right_alien_practice.setImage(r_a);
                    probset = [p4, p3];
                } else {
                    l_a = "resources/tutalien3_n.png";
                    r_a = "resources/tutalien4_n.png";
                    left_probability = p3;
                    right_probability = p4;
                    left_alien_practice.setImage(l_a);
                    right_alien_practice.setImage(r_a);
                    probset = [p3, p4];
                }
            } else {
                planet = "green";
                bg.setImage("resources/tutgreenplanet.jpg");
                background_practice_alien_selection.setImage("resources/tutgreenplanet.jpg");
                if ((flip_sides === true)) {
                    l_a = "resources/tutalien2_n.png";
                    r_a = "resources/tutalien1_n.png";
                    left_probability = p2;
                    right_probability = p1;
                    left_alien_practice.setImage(l_a);
                    right_alien_practice.setImage(r_a);
                    probset = [p2, p1];
                } else {
                    l_a = "resources/tutalien1_n.png";
                    r_a = "resources/tutalien2_n.png";
                    left_probability = p1;
                    right_probability = p2;
                    left_alien_practice.setImage(l_a);
                    right_alien_practice.setImage(r_a);
                    probset = [p1, p2];
                }
            }
        }
      End Routine:
        # determine transition
        trans = get_practice(0.7)

        # check if transition is rare
        rare_transition = 0
        if trans == 3:
            rare_transition = 1

        # precreate some variables
        select_sp = True
        show_alien = True

        # define visual parameters based on choice
        if key_resp_practice.keys == 'x':
            m_img_practice_selection1.setImage('resources/tutrocket1_a1.png')
            m_img_practice_selection2.setImage('resources/tutrocket1_a2.png')
            l_img_practice_selection1.setImage('resources/blank.png')
            l_img_practice_selection2.setImage('resources/blank.png')
            r_img_practice_selection1.setImage('resources/tutrocket2_d.png')
            r_img_practice_selection2.setImage('resources/tutrocket2_d.png')
            imgcenter_practice.setImage('resources/tutrocket1_d.png')
        elif key_resp_practice.keys == 'm':
            l_img_practice_selection1.setImage('resources/tutrocket1_d.png')
            l_img_practice_selection2.setImage('resources/tutrocket1_d.png')
            m_img_practice_selection1.setImage('resources/tutrocket2_a1.png')
            m_img_practice_selection2.setImage('resources/tutrocket2_a2.png')
            r_img_practice_selection1.setImage('resources/blank.png')
            r_img_practice_selection2.setImage('resources/blank.png')
            imgcenter_practice.setImage('resources/tutrocket2_d.png')
            trans = 5 - trans
        else:
            l_img_practice_selection1.setImage('resources/tutrocket1_s.png')
            l_img_practice_selection2.setImage('resources/tutrocket1_s.png')
            r_img_practice_selection1.setImage('resources/tutrocket2_s.png')
            r_img_practice_selection2.setImage('resources/tutrocket2_s.png')
            m_img_practice_selection1.setImage('resources/blank.png')
            m_img_practice_selection2.setImage('resources/blank.png')
            select_sp = False
            show_alien = False

        # determine planet based on transition
        if select_sp:
            if trans == 2:
                planet = 'yellow'
                bg.setImage('resources/tutyellowplanet.jpg')
                background_practice_alien_selection.setImage('resources/tutyellowplanet.jpg')
                if flip_sides == TRUE:
                    l_a = 'resources/tutalien4_n.png'
                    r_a = 'resources/tutalien3_n.png'
                    left_probability = p4
                    right_probability = p3

                    left_alien_practice.setImage(l_a)
                    right_alien_practice.setImage(r_a)
                    probset = [p4, p3]
                else:
                    l_a = 'resources/tutalien3_n.png'
                    r_a = 'resources/tutalien4_n.png'
                    left_probability = p3
                    right_probability = p4

                    left_alien_practice.setImage(l_a)
                    right_alien_practice.setImage(r_a)
                    probset = [p3, p4]
            else:
                planet = 'green'
                bg.setImage('resources/tutgreenplanet.jpg')
                background_practice_alien_selection.setImage('resources/tutgreenplanet.jpg')
                if flip_sides == TRUE:
                    l_a = 'resources/tutalien2_n.png'
                    r_a = 'resources/tutalien1_n.png'
                    left_probability = p2
                    right_probability = p1

                    left_alien_practice.setImage(l_a)
                    right_alien_practice.setImage(r_a)
                    probset = [p2, p1]
                else:
                    l_a = 'resources/tutalien1_n.png'
                    r_a = 'resources/tutalien2_n.png'
                    left_probability = p1
                    right_probability = p2

                    left_alien_practice.setImage(l_a)
                    right_alien_practice.setImage(r_a)
                    probset = [p1, p2]

        # save (uncomment if you wish to save practice data)
        #trials.addData("select_sp", select_sp)
        #trials.addData("show_alien", show_alien)
        #trials.addData("rocket_trans", trans)
        #trials.addData("planet", planet)
    ImageComponent background_practice
      image [set every repeat] = resources/earth.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent l_rocket_practice
      image = resources/tutrocket1_n.png
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent r_rocket_practice
      image = resources/tutrocket2_n.png
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_practice
      allowedKeys = 'x','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
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  Routine PRACTICE_rocket_selection
    RoutineSettingsComponent PRACTICE_rocket_selection
      saveStartStop = False
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    ImageComponent background_practice_selection
      image = resources/earth.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent l_img_practice_selection1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent l_img_practice_selection2
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent r_img_practice_selection1
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent r_img_practice_selection2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent m_img_practice_selection1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent m_img_practice_selection2
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine PRACTICE_alien
    RoutineSettingsComponent PRACTICE_alien
      saveStartStop = False
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    ImageComponent bg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imgcenter_practice
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent left_alien_practice
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent right_alien_practice
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_practice_alien
      allowedKeys = 'x','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
      syncScreenRefresh = False
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  Routine PRACTICE_alien_selection
    RoutineSettingsComponent PRACTICE_alien_selection
      saveStartStop = False
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    CodeComponent code_practice_alien_selection
      Code Type = Both
      Begin JS Routine:
        // precreate a variable
        select_alien = true;

        // determine visual parameters based on choice
        if ((planet === "green")) {
            if ((key_resp_practice_alien.keys === "x")) {
                if ((flip_sides === true)) {
                    m_img_practice_alien_selection1.setImage("resources/tutalien2_a1.png");
                    m_img_practice_alien_selection2.setImage("resources/tutalien2_a2.png");
                    l_img_practice_alien_selection1.setImage("resources/blank.png");
                    l_img_practice_alien_selection2.setImage("resources/blank.png");
                    r_img_practice_alien_selection1.setImage("resources/tutalien1_d.png");
                    r_img_practice_alien_selection2.setImage("resources/tutalien1_d.png");
                    probs = p2;
                    transmoney = get_practice(probs);
                    if ((transmoney === 2)) {
                        img_practice_alien_result.setImage("resources/tutalien2_n.png");
                        gold_practice.setImage("resources/t.png");
                        n_prac += 1;
                    } else {
                        img_practice_alien_result.setImage("resources/tutalien2_n.png");
                        gold_practice.setImage("resources/blank.png");
                    }
                } else {
                    m_img_practice_alien_selection1.setImage("resources/tutalien1_a1.png");
                    m_img_practice_alien_selection2.setImage("resources/tutalien1_a2.png");
                    l_img_practice_alien_selection1.setImage("resources/blank.png");
                    l_img_practice_alien_selection2.setImage("resources/blank.png");
                    r_img_practice_alien_selection1.setImage("resources/tutalien2_d.png");
                    r_img_practice_alien_selection2.setImage("resources/tutalien2_d.png");
                    probs = p1;
                    transmoney = get_practice(probs);
                    if ((transmoney === 2)) {
                        img_practice_alien_result.setImage("resources/tutalien1_n.png");
                        gold_practice.setImage("resources/t.png");
                        n_prac += 1;
                    } else {
                        img_practice_alien_result.setImage("resources/tutalien1_n.png");
                        gold_practice.setImage("resources/blank.png");
                    }
                }
            } else {
                if ((key_resp_practice_alien.keys === "m")) {
                    if ((flip_sides === true)) {
                        m_img_practice_alien_selection1.setImage("resources/tutalien1_a1.png");
                        m_img_practice_alien_selection2.setImage("resources/tutalien1_a2.png");
                        l_img_practice_alien_selection1.setImage("resources/tutalien2_d.png");
                        l_img_practice_alien_selection2.setImage("resources/tutalien2_d.png");
                        r_img_practice_alien_selection1.setImage("resources/blank.png");
                        r_img_practice_alien_selection2.setImage("resources/blank.png");
                        probs = p1;
                        transmoney = get_practice(probs);
                        if ((transmoney === 2)) {
                            img_practice_alien_result.setImage("resources/tutalien1_n.png");
                            gold_practice.setImage("resources/t.png");
                            n_prac += 1;
                        } else {
                            img_practice_alien_result.setImage("resources/tutalien1_n.png");
                            gold_practice.setImage("resources/blank.png");
                        }
                    } else {
                        m_img_practice_alien_selection1.setImage("resources/tutalien2_a1.png");
                        m_img_practice_alien_selection2.setImage("resources/tutalien2_a2.png");
                        l_img_practice_alien_selection1.setImage("resources/tutalien1_d.png");
                        l_img_practice_alien_selection2.setImage("resources/tutalien1_d.png");
                        r_img_practice_alien_selection1.setImage("resources/blank.png");
                        r_img_practice_alien_selection2.setImage("resources/blank.png");
                        probs = p2;
                        transmoney = get_practice(probs);
                        if ((transmoney === 2)) {
                            img_practice_alien_result.setImage("resources/tutalien2_n.png");
                            gold_practice.setImage("resources/t.png");
                            n_prac += 1;
                        } else {
                            img_practice_alien_result.setImage("resources/tutalien2_n.png");
                            gold_practice.setImage("resources/blank.png");
                        }
                    }
                } else {
                    if ((flip_sides === true)) {
                        l_img_practice_alien_selection1.setImage("resources/tutalien2_s.png");
                        l_img_practice_alien_selection2.setImage("resources/tutalien2_s.png");
                        r_img_practice_alien_selection1.setImage("resources/tutalien1_s.png");
                        r_img_practice_alien_selection2.setImage("resources/tutalien1_s.png");
                        m_img_practice_alien_selection1.setImage("resources/blank.png");
                        m_img_practice_alien_selection2.setImage("resources/blank.png");
                        gold_practice.setImage("resources/blank.png");
                        img_practice_alien_result.setImage("resources/blank.png");
                        select_alien = false;
                    } else {
                        l_img_practice_alien_selection1.setImage("resources/tutalien1_s.png");
                        l_img_practice_alien_selection2.setImage("resources/tutalien1_s.png");
                        r_img_practice_alien_selection1.setImage("resources/tutalien2_s.png");
                        r_img_practice_alien_selection2.setImage("resources/tutalien2_s.png");
                        m_img_practice_alien_selection1.setImage("resources/blank.png");
                        m_img_practice_alien_selection2.setImage("resources/blank.png");
                        gold_practice.setImage("resources/blank.png");
                        img_practice_alien_result.setImage("resources/blank.png");
                        select_alien = false;
                    }
                }
            }
        } else {
            if ((planet === "yellow")) {
                if ((key_resp_practice_alien.keys === "x")) {
                    if ((flip_sides === true)) {
                        m_img_practice_alien_selection1.setImage("resources/tutalien4_a1.png");
                        m_img_practice_alien_selection2.setImage("resources/tutalien4_a2.png");
                        r_img_practice_alien_selection1.setImage("resources/tutalien3_d.png");
                        r_img_practice_alien_selection2.setImage("resources/tutalien3_d.png");
                        l_img_practice_alien_selection1.setImage("resources/blank.png");
                        l_img_practice_alien_selection2.setImage("resources/blank.png");
                        probs = p4;
                        transmoney = get_practice(probs);
                        if ((transmoney === 2)) {
                            img_practice_alien_result.setImage("resources/tutalien4_n.png");
                            gold_practice.setImage("resources/t.png");
                            n_prac += 1;
                        } else {
                            img_practice_alien_result.setImage("resources/tutalien4_n.png");
                            gold_practice.setImage("resources/blank.png");
                        }
                    } else {
                        m_img_practice_alien_selection1.setImage("resources/tutalien3_a1.png");
                        m_img_practice_alien_selection2.setImage("resources/tutalien3_a2.png");
                        r_img_practice_alien_selection1.setImage("resources/tutalien4_d.png");
                        r_img_practice_alien_selection2.setImage("resources/tutalien4_d.png");
                        l_img_practice_alien_selection1.setImage("resources/blank.png");
                        l_img_practice_alien_selection2.setImage("resources/blank.png");
                        probs = p3;
                        transmoney = get_practice(probs);
                        if ((transmoney === 2)) {
                            img_practice_alien_result.setImage("resources/tutalien3_n.png");
                            gold_practice.setImage("resources/t.png");
                            n_prac += 1;
                        } else {
                            img_practice_alien_result.setImage("resources/tutalien3_n.png");
                            gold_practice.setImage("resources/blank.png");
                        }
                    }
                } else {
                    if ((key_resp_practice_alien.keys === "m")) {
                        if ((flip_sides === true)) {
                            l_img_practice_alien_selection1.setImage("resources/tutalien4_d.png");
                            l_img_practice_alien_selection2.setImage("resources/tutalien4_d.png");
                            m_img_practice_alien_selection1.setImage("resources/tutalien3_a1.png");
                            m_img_practice_alien_selection2.setImage("resources/tutalien3_a2.png");
                            r_img_practice_alien_selection1.setImage("resources/blank.png");
                            r_img_practice_alien_selection2.setImage("resources/blank.png");
                            probs = p3;
                            transmoney = get_practice(probs);
                            if ((transmoney === 2)) {
                                img_practice_alien_result.setImage("resources/tutalien3_n.png");
                                gold_practice.setImage("resources/t.png");
                                n_prac += 1;
                            } else {
                                img_practice_alien_result.setImage("resources/tutalien3_n.png");
                                gold_practice.setImage("resources/blank.png");
                            }
                        } else {
                            l_img_practice_alien_selection1.setImage("resources/tutalien3_d.png");
                            l_img_practice_alien_selection2.setImage("resources/tutalien3_d.png");
                            m_img_practice_alien_selection1.setImage("resources/tutalien4_a1.png");
                            m_img_practice_alien_selection2.setImage("resources/tutalien4_a2.png");
                            r_img_practice_alien_selection1.setImage("resources/blank.png");
                            r_img_practice_alien_selection2.setImage("resources/blank.png");
                            probs = p4;
                            transmoney = get_practice(probs);
                            if ((transmoney === 2)) {
                                img_practice_alien_result.setImage("resources/tutalien4_n.png");
                                gold_practice.setImage("resources/t.png");
                                n_prac += 1;
                            } else {
                                img_practice_alien_result.setImage("resources/tutalien4_n.png");
                                gold_practice.setImage("resources/blank.png");
                            }
                        }
                    } else {
                        if ((flip_sides === true)) {
                            l_img_practice_alien_selection1.setImage("resources/tutalien4_s.png");
                            l_img_practice_alien_selection2.setImage("resources/tutalien4_s.png");
                            r_img_practice_alien_selection1.setImage("resources/tutalien3_s.png");
                            r_img_practice_alien_selection2.setImage("resources/tutalien3_s.png");
                            m_img_practice_alien_selection1.setImage("resources/blank.png");
                            m_img_practice_alien_selection2.setImage("resources/blank.png");
                            gold_practice.setImage("resources/blank.png");
                            img_practice_alien_result.setImage("resources/blank.png");
                            select_alien = false;
                        } else {
                            l_img_practice_alien_selection1.setImage("resources/tutalien3_s.png");
                            l_img_practice_alien_selection2.setImage("resources/tutalien3_s.png");
                            r_img_practice_alien_selection1.setImage("resources/tutalien4_s.png");
                            r_img_practice_alien_selection2.setImage("resources/tutalien4_s.png");
                            m_img_practice_alien_selection1.setImage("resources/blank.png");
                            m_img_practice_alien_selection2.setImage("resources/blank.png");
                            gold_practice.setImage("resources/blank.png");
                            img_practice_alien_result.setImage("resources/blank.png");
                            select_alien = false;
                        }
                    }
                }
            }
        }
      Begin Routine:
        # precreate a variable
        select_alien = True

        # determine visual parameters based on choice
        if planet == 'green':
            if key_resp_practice_alien.keys == 'x':
                if flip_sides == TRUE:
                    m_img_practice_alien_selection1.setImage('resources/tutalien2_a1.png')
                    m_img_practice_alien_selection2.setImage('resources/tutalien2_a2.png')
                    l_img_practice_alien_selection1.setImage('resources/blank.png')
                    l_img_practice_alien_selection2.setImage('resources/blank.png')
                    r_img_practice_alien_selection1.setImage('resources/tutalien1_d.png')
                    r_img_practice_alien_selection2.setImage('resources/tutalien1_d.png')
                    probs = p2
                    transmoney = get_practice(probs)
                    if transmoney == 2:
                        img_practice_alien_result.setImage('resources/tutalien2_n.png')
                        gold_practice.setImage('resources/t.png')
                        n_prac += 1
                    else:
                        img_practice_alien_result.setImage('resources/tutalien2_n.png')
                        gold_practice.setImage('resources/blank.png')
                else:
                    m_img_practice_alien_selection1.setImage('resources/tutalien1_a1.png')
                    m_img_practice_alien_selection2.setImage('resources/tutalien1_a2.png')
                    l_img_practice_alien_selection1.setImage('resources/blank.png')
                    l_img_practice_alien_selection2.setImage('resources/blank.png')
                    r_img_practice_alien_selection1.setImage('resources/tutalien2_d.png')
                    r_img_practice_alien_selection2.setImage('resources/tutalien2_d.png')
                    probs = p1
                    transmoney = get_practice(probs)
                    if transmoney == 2:
                        img_practice_alien_result.setImage('resources/tutalien1_n.png')
                        gold_practice.setImage('resources/t.png')
                        n_prac += 1
                    else:
                        img_practice_alien_result.setImage('resources/tutalien1_n.png')
                        gold_practice.setImage('resources/blank.png')
            elif key_resp_practice_alien.keys == 'm':
                if flip_sides == TRUE:
                    m_img_practice_alien_selection1.setImage('resources/tutalien1_a1.png')
                    m_img_practice_alien_selection2.setImage('resources/tutalien1_a2.png')
                    l_img_practice_alien_selection1.setImage('resources/tutalien2_d.png')
                    l_img_practice_alien_selection2.setImage('resources/tutalien2_d.png')
                    r_img_practice_alien_selection1.setImage('resources/blank.png')
                    r_img_practice_alien_selection2.setImage('resources/blank.png')
                    probs = p1
                    transmoney = get_practice(probs)
                    if transmoney == 2:
                        img_practice_alien_result.setImage('resources/tutalien1_n.png')
                        gold_practice.setImage('resources/t.png')
                        n_prac += 1
                    else:
                        img_practice_alien_result.setImage('resources/tutalien1_n.png')
                        gold_practice.setImage('resources/blank.png')

                else:
                    m_img_practice_alien_selection1.setImage('resources/tutalien2_a1.png')
                    m_img_practice_alien_selection2.setImage('resources/tutalien2_a2.png')
                    l_img_practice_alien_selection1.setImage('resources/tutalien1_d.png')
                    l_img_practice_alien_selection2.setImage('resources/tutalien1_d.png')
                    r_img_practice_alien_selection1.setImage('resources/blank.png')
                    r_img_practice_alien_selection2.setImage('resources/blank.png')
                    probs = p2
                    transmoney = get_practice(probs)
                    if transmoney == 2:
                        img_practice_alien_result.setImage('resources/tutalien2_n.png')
                        gold_practice.setImage('resources/t.png')
                        n_prac += 1
                    else:
                        img_practice_alien_result.setImage('resources/tutalien2_n.png')
                        gold_practice.setImage('resources/blank.png')
            else:
                if flip_sides == TRUE:
                    l_img_practice_alien_selection1.setImage('resources/tutalien2_s.png')
                    l_img_practice_alien_selection2.setImage('resources/tutalien2_s.png')
                    r_img_practice_alien_selection1.setImage('resources/tutalien1_s.png')
                    r_img_practice_alien_selection2.setImage('resources/tutalien1_s.png')
                    m_img_practice_alien_selection1.setImage('resources/blank.png')
                    m_img_practice_alien_selection2.setImage('resources/blank.png')
                    gold_practice.setImage('resources/blank.png')
                    img_practice_alien_result.setImage('resources/blank.png')
                    select_alien = False
                else:
                    l_img_practice_alien_selection1.setImage('resources/tutalien1_s.png')
                    l_img_practice_alien_selection2.setImage('resources/tutalien1_s.png')
                    r_img_practice_alien_selection1.setImage('resources/tutalien2_s.png')
                    r_img_practice_alien_selection2.setImage('resources/tutalien2_s.png')
                    m_img_practice_alien_selection1.setImage('resources/blank.png')
                    m_img_practice_alien_selection2.setImage('resources/blank.png')
                    gold_practice.setImage('resources/blank.png')
                    img_practice_alien_result.setImage('resources/blank.png')
                    select_alien = False

        elif planet == 'yellow':
            if key_resp_practice_alien.keys == 'x':
                if flip_sides == TRUE:
                    m_img_practice_alien_selection1.setImage('resources/tutalien4_a1.png')
                    m_img_practice_alien_selection2.setImage('resources/tutalien4_a2.png')
                    r_img_practice_alien_selection1.setImage('resources/tutalien3_d.png')
                    r_img_practice_alien_selection2.setImage('resources/tutalien3_d.png')
                    l_img_practice_alien_selection1.setImage('resources/blank.png')
                    l_img_practice_alien_selection2.setImage('resources/blank.png')
                    probs = p4
                    transmoney = get_practice(probs)
                    if transmoney == 2:
                        img_practice_alien_result.setImage('resources/tutalien4_n.png')
                        gold_practice.setImage('resources/t.png')
                        n_prac += 1
                    else:
                        img_practice_alien_result.setImage('resources/tutalien4_n.png')
                        gold_practice.setImage('resources/blank.png')
                else:
                    m_img_practice_alien_selection1.setImage('resources/tutalien3_a1.png')
                    m_img_practice_alien_selection2.setImage('resources/tutalien3_a2.png')
                    r_img_practice_alien_selection1.setImage('resources/tutalien4_d.png')
                    r_img_practice_alien_selection2.setImage('resources/tutalien4_d.png')
                    l_img_practice_alien_selection1.setImage('resources/blank.png')
                    l_img_practice_alien_selection2.setImage('resources/blank.png')
                    probs = p3
                    transmoney = get_practice(probs)
                    if transmoney == 2:
                        img_practice_alien_result.setImage('resources/tutalien3_n.png')
                        gold_practice.setImage('resources/t.png')
                        n_prac += 1
                    else:
                        img_practice_alien_result.setImage('resources/tutalien3_n.png')
                        gold_practice.setImage('resources/blank.png')
            elif key_resp_practice_alien.keys == 'm':
                if flip_sides == TRUE:
                    l_img_practice_alien_selection1.setImage('resources/tutalien4_d.png')
                    l_img_practice_alien_selection2.setImage('resources/tutalien4_d.png')
                    m_img_practice_alien_selection1.setImage('resources/tutalien3_a1.png')
                    m_img_practice_alien_selection2.setImage('resources/tutalien3_a2.png')
                    r_img_practice_alien_selection1.setImage('resources/blank.png')
                    r_img_practice_alien_selection2.setImage('resources/blank.png')
                    probs = p3
                    transmoney = get_practice(probs)
                    if transmoney == 2:
                        img_practice_alien_result.setImage('resources/tutalien3_n.png')
                        gold_practice.setImage('resources/t.png')
                        n_prac += 1
                    else:
                        img_practice_alien_result.setImage('resources/tutalien3_n.png')
                        gold_practice.setImage('resources/blank.png')
                else:
                    l_img_practice_alien_selection1.setImage('resources/tutalien3_d.png')
                    l_img_practice_alien_selection2.setImage('resources/tutalien3_d.png')
                    m_img_practice_alien_selection1.setImage('resources/tutalien4_a1.png')
                    m_img_practice_alien_selection2.setImage('resources/tutalien4_a2.png')
                    r_img_practice_alien_selection1.setImage('resources/blank.png')
                    r_img_practice_alien_selection2.setImage('resources/blank.png')
                    probs = p4
                    transmoney = get_practice(probs)
                    if transmoney == 2:
                        img_practice_alien_result.setImage('resources/tutalien4_n.png')
                        gold_practice.setImage('resources/t.png')
                        n_prac += 1
                    else:
                        img_practice_alien_result.setImage('resources/tutalien4_n.png')
                        gold_practice.setImage('resources/blank.png')
            else:
                if flip_sides == TRUE:
                    l_img_practice_alien_selection1.setImage('resources/tutalien4_s.png')
                    l_img_practice_alien_selection2.setImage('resources/tutalien4_s.png')
                    r_img_practice_alien_selection1.setImage('resources/tutalien3_s.png')
                    r_img_practice_alien_selection2.setImage('resources/tutalien3_s.png')
                    m_img_practice_alien_selection1.setImage('resources/blank.png')
                    m_img_practice_alien_selection2.setImage('resources/blank.png')
                    gold_practice.setImage('resources/blank.png')
                    img_practice_alien_result.setImage('resources/blank.png')
                    select_alien = False
                else:
                    l_img_practice_alien_selection1.setImage('resources/tutalien3_s.png')
                    l_img_practice_alien_selection2.setImage('resources/tutalien3_s.png')
                    r_img_practice_alien_selection1.setImage('resources/tutalien4_s.png')
                    r_img_practice_alien_selection2.setImage('resources/tutalien4_s.png')
                    m_img_practice_alien_selection1.setImage('resources/blank.png')
                    m_img_practice_alien_selection2.setImage('resources/blank.png')
                    gold_practice.setImage('resources/blank.png')
                    img_practice_alien_result.setImage('resources/blank.png')
                    select_alien = False

        # save (uncomment if you wish to save practice data)
        #thisExp.addData('select_alien', select_alien)
        #thisExp.addData('n_prac', n_prac)
        #thisExp.addData('probs', probs)
        #thisExp.addData('transmoney', transmoney)
    ImageComponent background_practice_alien_selection
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent m_img_practice_alien_selection1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent m_img_practice_alien_selection2
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent l_img_practice_alien_selection1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent l_img_practice_alien_selection2
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent r_img_practice_alien_selection1
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent r_img_practice_alien_selection2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent img_practice_alien_result
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.91
      stopVal [duration (s)] = 1.09
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    ImageComponent gold_practice
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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  Routine count_practice_gold
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    CodeComponent code_count_practice_gold
      Code Type = Both
      Begin JS Routine:
        // initialize count of gold gained in the practice
        n_prac = 0;
      Begin Routine:
        # initialize count of gold gained in the practice
        n_prac = 0
  Routine TUT_22
    RoutineSettingsComponent TUT_22
      saveStartStop = False
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    TextComponent text_TUT_22
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        That is the end of the practice game.

        Press SPACE to see how you did...
    KeyboardComponent key_resp_TUT_22
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TUT_23
    RoutineSettingsComponent TUT_23
      saveStartStop = False
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    TextComponent text_show_practice_gold
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You got ' + str (n_prac) + ' pieces of treasure.\n\nPress SPACE to continue.'
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    KeyboardComponent key_resp_show_practice_gold
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TUT_24
    RoutineSettingsComponent TUT_24
      saveStartStop = False
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    TextComponent text_TUT_24
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Okay, that is nearly the end of the tutorial! In the real game, the planets, aliens, and spaceships will be new colors, but the rules will be the same. The game is hard, so you will need to concentrate, but don't be afraid to trust your instincts. Here are three hints on how to play the game.

        Press SPACE to continue.
    KeyboardComponent key_resp_TUT_24
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TUT_25
    RoutineSettingsComponent TUT_25
      saveStartStop = False
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    TextComponent text_TUT_25
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hint #1:
        Remember which aliens have treasure. The aliens will appear on different sides from trial to trial, so it is important to remember what each alien looks like. How good a mine is changes slowly, so an alien that has a lot of treasure to share now, will probably be able to share a lot in the near future. However, this might slowly change during the game, as those aliens with a good mine might get to a part of the mine that is hard to dig and those with little to share might find easier treasure to dig. Stay focused to pick up which alien is the best to ask for treasure at each point in time, as this way you will earn the most treasure.

        Press SPACE to continue.
    KeyboardComponent key_resp_TUT_25
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TUT_26
    RoutineSettingsComponent TUT_26
      saveStartStop = False
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    TextComponent text_TUT_26
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hint #2:
        Remember, each alien has its own mine.  Just because one alien has a bad mine and can't share very often, does not mean another has a good mine. Also, there are no funny patterns in how an alien shares, like every other time you ask, or depending on which spaceship you took. The aliens are not trying to trick you.

        Press SPACE to continue.
    KeyboardComponent key_resp_TUT_26
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TUT_27
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    TextComponent text_TUT_27
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hint #3:
        The spaceship you choose is important because often an alien on one planet may be better than the ones on another planet. You can find more treasure by finding the spaceship that is most likely to take you to right planet.

        Press SPACE to continue.
    KeyboardComponent key_resp_TUT_27
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TUT_28
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    TextComponent text_TUT_28
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        OK! Now you know how to play. In the real game we'll count how many pieces of space treasure you find and pay you real money for it at the end.

        Ready?  Now its time to play the game!  Good luck space traveler!

        Press SPACE to play.
    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent treasure_count
      Code Type = Auto->JS
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      Begin Routine:
        totalgold = 0
  Routine EXP_rocket
    RoutineSettingsComponent EXP_rocket
      saveStartStop = False
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    CodeComponent code_exp_rocket
      Code Type = Both
      Begin JS Routine:
        // save payoff info in each row for simplified analysis
        psychoJS.experiment.addData("payoff_list", payoff);

        // save phase info for convenience
        psychoJS.experiment.addData("phase", 'learning');
      Begin Routine:
        # save payoff info in each row for simplified analysis
        thisExp.addData('payoff_list', payoff)

        # save phase info for convenience
        thisExp.addData('phase', 'learning')
      End JS Routine:
        // pull probabilities for rocket transition
        let [trans, rand_sp] = get(0.7);

        // save if rare transition
        rare_transition = 0;
        if ((trans === 3)) {
            rare_transition = 1;
        }
        psychoJS.experiment.addData("rare_transition", rare_transition);

        // precreate variables
        select_sp = true;
        show_alien = true;

        // set display according to the choice
        if ((key_resp_exp.keys === "x")) {
            l_img_exp_selection1.setImage("resources/blank.png");
            l_img_exp_selection2.setImage("resources/blank.png");
            m_img_exp_selection1.setImage("resources/rocket1_a1.png");
            m_img_exp_selection2.setImage("resources/rocket1_a2.png");
            r_img_exp_selection1.setImage("resources/rocket2_deact.png");
            r_img_exp_selection2.setImage("resources/rocket2_deact.png");
            imgcenter_exp.setImage("resources/rocket1_deact.png");
        } else {
            if ((key_resp_exp.keys === "m")) {
                l_img_exp_selection1.setImage("resources/rocket1_deact.png");
                l_img_exp_selection2.setImage("resources/rocket1_deact.png");
                m_img_exp_selection1.setImage("resources/rocket2_a1.png");
                m_img_exp_selection2.setImage("resources/rocket2_a2.png");
                r_img_exp_selection1.setImage("resources/blank.png");
                r_img_exp_selection2.setImage("resources/blank.png");
                imgcenter_exp.setImage("resources/rocket2_deact.png");
                trans = (5 - trans);
            } else {
                l_img_exp_selection1.setImage("resources/rocket1_sp.png");
                l_img_exp_selection2.setImage("resources/rocket1_sp.png");
                r_img_exp_selection1.setImage("resources/rocket2_sp.png");
                r_img_exp_selection2.setImage("resources/rocket2_sp.png");
                m_img_exp_selection1.setImage("resources/blank.png");
                m_img_exp_selection2.setImage("resources/blank.png");
                select_sp = false;
                show_alien = false;
            }
        }

        // choose planet according to rocket transition probability
        if (select_sp) {
            if ((trans === 2)) {
                planet = "purple";
                bg_exp.setImage("resources/purpleplanet.jpg");
                background_exp_alien_selection.setImage("resources/purpleplanet.jpg");
                if ((flip_sides === true)) {
                    l_a = "resources/alien4_norm.png";
                    r_a = "resources/alien3_norm.png";
                    left_probability = p4;
                    right_probability = p3;
                    left_alien_exp.setImage(l_a);
                    psychoJS.experiment.addData("left_alien", l_a);
                    psychoJS.experiment.addData("left_probabilty", left_probability);
                    right_alien_exp.setImage(r_a);
                    psychoJS.experiment.addData("right_alien", r_a);
                    psychoJS.experiment.addData("right_probabilty", right_probability);
                    probset = [p3, p4];
                } else {
                    l_a = "resources/alien3_norm.png";
                    r_a = "resources/alien4_norm.png";
                    left_probability = p3;
                    right_probability = p4;
                    left_alien_exp.setImage(l_a);
                    psychoJS.experiment.addData("left_alien", l_a);
                    psychoJS.experiment.addData("left_probabilty", left_probability);
                    right_alien_exp.setImage(r_a);
                    psychoJS.experiment.addData("right_alien", r_a);
                    psychoJS.experiment.addData("right_probabilty", right_probability);
                    probset = [p3, p4];
                }
            } else {
                planet = "red";
                bg_exp.setImage("resources/redplanet.jpg");
                background_exp_alien_selection.setImage("resources/redplanet.jpg");
                if ((flip_sides === true)) {
                    l_a = "resources/alien2_norm.png";
                    r_a = "resources/alien1_norm.png";
                    left_probability = p2;
                    right_probability = p1;
                    left_alien_exp.setImage(l_a);
                    psychoJS.experiment.addData("left_alien", l_a);
                    psychoJS.experiment.addData("left_probabilty", left_probability);
                    right_alien_exp.setImage(r_a);
                    psychoJS.experiment.addData("right_alien", r_a);
                    psychoJS.experiment.addData("right_probabilty", right_probability);
                    probset = [p1, p2];
                } else {
                    l_a = "resources/alien1_norm.png";
                    r_a = "resources/alien2_norm.png";
                    left_probability = p1;
                    right_probability = p2;
                    left_alien_exp.setImage(l_a);
                    psychoJS.experiment.addData("left_alien", l_a);
                    psychoJS.experiment.addData("left_probabilty", left_probability);
                    right_alien_exp.setImage(r_a);
                    psychoJS.experiment.addData("right_alien", r_a);
                    psychoJS.experiment.addData("right_probabilty", right_probability);
                    probset = [p1, p2];
                }
            }
        }

        // save helper variables
        psychoJS.experiment.addData("select_sp", select_sp);
        psychoJS.experiment.addData("show_alien", show_alien);
        psychoJS.experiment.addData("rocket_trans", trans);
        psychoJS.experiment.addData("rand_sp", rand_sp);
        psychoJS.experiment.addData("planet", planet);
      End Routine:
        # pull probabilities for rocket transition
        (trans, rand_sp) = get(0.7)

        # save if rare transition
        rare_transition = 0
        if trans == 3:
            rare_transition = 1
        thisExp.addData ('rare_transition', rare_transition)

        # precreate variables
        select_sp = True
        show_alien = True

        # set display according to the choice
        if key_resp_exp.keys == 'x':
            l_img_exp_selection1.setImage('resources/blank.png')
            l_img_exp_selection2.setImage('resources/blank.png')
            m_img_exp_selection1.setImage('resources/rocket1_a1.png')
            m_img_exp_selection2.setImage('resources/rocket1_a2.png')
            r_img_exp_selection1.setImage('resources/rocket2_deact.png')
            r_img_exp_selection2.setImage('resources/rocket2_deact.png')
            imgcenter_exp.setImage('resources/rocket1_deact.png')
        elif key_resp_exp.keys == 'm':
            l_img_exp_selection1.setImage('resources/rocket1_deact.png')
            l_img_exp_selection2.setImage('resources/rocket1_deact.png')
            m_img_exp_selection1.setImage('resources/rocket2_a1.png')
            m_img_exp_selection2.setImage('resources/rocket2_a2.png')
            r_img_exp_selection1.setImage('resources/blank.png')
            r_img_exp_selection2.setImage('resources/blank.png')
            imgcenter_exp.setImage('resources/rocket2_deact.png')
            trans = 5 - trans
        else:
            l_img_exp_selection1.setImage('resources/rocket1_sp.png')
            l_img_exp_selection2.setImage('resources/rocket1_sp.png')
            r_img_exp_selection1.setImage('resources/rocket2_sp.png')
            r_img_exp_selection2.setImage('resources/rocket2_sp.png')
            m_img_exp_selection1.setImage('resources/blank.png')
            m_img_exp_selection2.setImage('resources/blank.png')
            select_sp = False
            show_alien = False

        # choose planet according to rocket transition probability
        if select_sp:
            if trans == 2:
                planet = 'purple'
                bg_exp.setImage('resources/purpleplanet.jpg')
                background_exp_alien_selection.setImage('resources/purpleplanet.jpg')
                if flip_sides == TRUE:
                    l_a = 'resources/alien4_norm.png'
                    r_a = 'resources/alien3_norm.png'
                    left_probability = p4
                    right_probability = p3

                    left_alien_exp.setImage(l_a)
                    thisExp.addData('left_alien', l_a)
                    thisExp.addData('left_probabilty', left_probability)

                    right_alien_exp.setImage(r_a)
                    thisExp.addData('right_alien', t_a)
                    thisExp.addData('right_probabilty', right_probability)
                    probset = [p3, p4]
                else:
                    l_a = 'resources/alien3_norm.png'
                    r_a = 'resources/alien4_norm.png'
                    left_probability = p3
                    right_probability = p4

                    left_alien_exp.setImage(l_a)
                    thisExp.addData('left_alien', l_a)
                    thisExp.addData('left_probabilty', left_probability)

                    right_alien_exp.setImage(r_a)
                    thisExp.addData('right_alien', r_a)
                    thisExp.addData('right_probabilty', right_probability)
                    probset = [p3, p4]
            else:
                planet = 'red'
                bg_exp.setImage("resources/redplanet.jpg")
                background_exp_alien_selection.setImage("resources/redplanet.jpg")
                if flip_sides == TRUE:
                    l_a = 'resources/alien2_norm.png'
                    r_a = 'resources/alien1_norm.png'
                    left_probability = p2
                    right_probability = p1

                    left_alien_exp.setImage(l_a)
                    thisExp.addData('left_alien', l_a)
                    thisExp.addData('left_probabilty', left_probability)

                    right_alien_exp.setImage(r_a)
                    thisExp.addData('right_alien', r_a)
                    thisExp.addData('right_probabilty', right_probability)
                    probset = [p1, p2]
                else:
                    l_a = 'resources/alien1_norm.png'
                    r_a = 'resources/alien2_norm.png'
                    left_probability = p1
                    right_probability = p2

                    left_alien_exp.setImage(l_a)
                    thisExp.addData('left_alien', l_a)
                    thisExp.addData('left_probabilty', left_probability)

                    right_alien_exp.setImage(r_a)
                    thisExp.addData('right_alien', r_a)
                    thisExp.addData('right_probabilty', right_probability)
                    probset = [p1, p2]


        # save helper variables
        thisExp.addData("select_sp", select_sp)
        thisExp.addData("show_alien", show_alien)
        thisExp.addData("rocket_trans", trans)
        thisExp.addData("rand_sp", rand_sp)
        thisExp.addData("planet", planet)
    ImageComponent background_exp
      image [set every repeat] = resources/earth.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent l_rocket_exp
      image = resources/rocket1_norm.png
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent r_rocket_exp
      image = resources/rocket2_norm.png
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_exp
      allowedKeys = 'x','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine EXP_alien
    RoutineSettingsComponent EXP_alien
      saveStartStop = False
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    CodeComponent code_define_alien
      Code Type = Both
      End JS Routine:
        // precreate variables
        trialgain = 0; // Is gold earned on the current trial?
        transmoney = "NA";
        select_alien = true;
        var rand_money;

        // determine visual parameters based on choice
        if ((planet === "purple")) {
            if ((key_resp_exp_alien.keys === "x")) {
                if ((flip_sides === true)) {
                    m_img_exp_alien_selection1.setImage("resources/alien4_a1.png");
                    m_img_exp_alien_selection2.setImage("resources/alien4_a2.png");
                    l_img_exp_alien_selection1.setImage("resources/blank.png");
                    l_img_exp_alien_selection2.setImage("resources/blank.png");
                    r_img_exp_alien_selection1.setImage("resources/alien3_deact.png");
                    r_img_exp_alien_selection2.setImage("resources/alien3_deact.png");
                    psychoJS.experiment.addData("chosen_alien", "alien4");
                    probs = p4;
                    [transmoney, rand_money] = get(probs);
                    if ((transmoney === 2)) {
                        img_exp_alien_result.setImage("resources/alien4_norm.png");
                        gold_exp.setImage("resources/t.png");
                        totalgold += 1;
                        trialgain = 1;
                    } else {
                        img_exp_alien_result.setImage("resources/alien4_norm.png");
                        gold_exp.setImage("resources/blank.png");
                    }
                } else {
                    m_img_exp_alien_selection1.setImage("resources/alien3_a1.png");
                    m_img_exp_alien_selection2.setImage("resources/alien3_a2.png");
                    l_img_exp_alien_selection1.setImage("resources/blank.png");
                    l_img_exp_alien_selection2.setImage("resources/blank.png");
                    r_img_exp_alien_selection1.setImage("resources/alien4_deact.png");
                    r_img_exp_alien_selection2.setImage("resources/alien4_deact.png");
                    psychoJS.experiment.addData("chosen_alien", "alien3");
                    probs = p3;
                    [transmoney, rand_money] = get(probs);
                    if ((transmoney === 2)) {
                        img_exp_alien_result.setImage("resources/alien3_norm.png");
                        gold_exp.setImage("resources/t.png");
                        totalgold += 1;
                        trialgain = 1;
                    } else {
                        img_exp_alien_result.setImage("resources/alien3_norm.png");
                        gold_exp.setImage("resources/blank.png");
                    }
                }
            } else {
                if ((key_resp_exp_alien.keys === "m")) {
                    if ((flip_sides === true)) {
                        l_img_exp_alien_selection1.setImage("resources/alien4_deact.png");
                        l_img_exp_alien_selection2.setImage("resources/alien4_deact.png");
                        m_img_exp_alien_selection1.setImage("resources/alien3_a1.png");
                        m_img_exp_alien_selection2.setImage("resources/alien3_a2.png");
                        r_img_exp_alien_selection1.setImage("resources/blank.png");
                        r_img_exp_alien_selection2.setImage("resources/blank.png");
                        psychoJS.experiment.addData("chosen_alien", "alien3");
                        probs = p3;
                        [transmoney, rand_money] = get(probs);
                        if ((transmoney === 2)) {
                            img_exp_alien_result.setImage("resources/alien3_norm.png");
                            gold_exp.setImage("resources/t.png");
                            totalgold += 1;
                            trialgain = 1;
                        } else {
                            img_exp_alien_result.setImage("resources/alien3_norm.png");
                            gold_exp.setImage("resources/blank.png");
                        }
                    } else {
                        l_img_exp_alien_selection1.setImage("resources/alien3_deact.png");
                        l_img_exp_alien_selection2.setImage("resources/alien3_deact.png");
                        m_img_exp_alien_selection1.setImage("resources/alien4_a1.png");
                        m_img_exp_alien_selection2.setImage("resources/alien4_a2.png");
                        r_img_exp_alien_selection1.setImage("resources/blank.png");
                        r_img_exp_alien_selection2.setImage("resources/blank.png");
                        psychoJS.experiment.addData("chosen_alien", "alien4");
                        probs = p4;
                        [transmoney, rand_money] = get(probs);
                        if ((transmoney === 2)) {
                            img_exp_alien_result.setImage("resources/alien4_norm.png");
                            gold_exp.setImage("resources/t.png");
                            totalgold += 1;
                            trialgain = 1;
                        } else {
                            img_exp_alien_result.setImage("resources/alien4_norm.png");
                            gold_exp.setImage("resources/blank.png");
                        }
                    }
                } else {
                    if ((flip_sides === true)) {
                        l_img_exp_alien_selection1.setImage("resources/alien4_sp.png");
                        l_img_exp_alien_selection2.setImage("resources/alien4_sp.png");
                        r_img_exp_alien_selection1.setImage("resources/alien3_sp.png");
                        r_img_exp_alien_selection2.setImage("resources/alien3_sp.png");
                        m_img_exp_alien_selection1.setImage("resources/blank.png");
                        m_img_exp_alien_selection2.setImage("resources/blank.png");
                        img_exp_alien_result.setImage("resources/blank.png");
                        gold_exp.setImage("resources/blank.png");
                        select_alien = false;
                        psychoJS.experiment.addData("chosen_alien", "none");
                    } else {
                        l_img_exp_alien_selection1.setImage("resources/alien3_sp.png");
                        l_img_exp_alien_selection2.setImage("resources/alien3_sp.png");
                        r_img_exp_alien_selection1.setImage("resources/alien4_sp.png");
                        r_img_exp_alien_selection2.setImage("resources/alien4_sp.png");
                        m_img_exp_alien_selection1.setImage("resources/blank.png");
                        m_img_exp_alien_selection2.setImage("resources/blank.png");
                        img_exp_alien_result.setImage("resources/blank.png");
                        gold_exp.setImage("resources/blank.png");
                        select_alien = false;
                        psychoJS.experiment.addData("chosen_alien", "none");
                    }
                }
            }
        } else {
            if ((planet === "red")) {
                if ((key_resp_exp_alien.keys === "x")) {
                    if ((flip_sides === true)) {
                        m_img_exp_alien_selection1.setImage("resources/alien2_a1.png");
                        m_img_exp_alien_selection2.setImage("resources/alien2_a2.png");
                        l_img_exp_alien_selection1.setImage("resources/blank.png");
                        l_img_exp_alien_selection2.setImage("resources/blank.png");
                        r_img_exp_alien_selection1.setImage("resources/alien1_deact.png");
                        r_img_exp_alien_selection2.setImage("resources/alien1_deact.png");
                        psychoJS.experiment.addData("chosen_alien", "alien2");
                        probs = p2;
                        [transmoney, rand_money] = get(probs);
                        if ((transmoney === 2)) {
                            img_exp_alien_result.setImage("resources/alien2_norm.png");
                            gold_exp.setImage("resources/t.png");
                            totalgold += 1;
                            trialgain = 1;
                        } else {
                            img_exp_alien_result.setImage("resources/alien2_norm.png");
                            gold_exp.setImage("resources/blank.png");
                        }
                    } else {
                        m_img_exp_alien_selection1.setImage("resources/alien1_a1.png");
                        m_img_exp_alien_selection2.setImage("resources/alien1_a2.png");
                        l_img_exp_alien_selection1.setImage("resources/blank.png");
                        l_img_exp_alien_selection2.setImage("resources/blank.png");
                        r_img_exp_alien_selection1.setImage("resources/alien2_deact.png");
                        r_img_exp_alien_selection2.setImage("resources/alien2_deact.png");
                        psychoJS.experiment.addData("chosen_alien", "alien1");
                        probs = p1;
                        [transmoney, rand_money] = get(probs);
                        if ((transmoney === 2)) {
                            img_exp_alien_result.setImage("resources/alien1_norm.png");
                            gold_exp.setImage("resources/t.png");
                            totalgold += 1;
                            trialgain = 1;
                        } else {
                            img_exp_alien_result.setImage("resources/alien1_norm.png");
                            gold_exp.setImage("resources/blank.png");
                        }
                    }
                } else {
                    if ((key_resp_exp_alien.keys === "m")) {
                        if ((flip_sides === true)) {
                            l_img_exp_alien_selection1.setImage("resources/alien2_deact.png");
                            l_img_exp_alien_selection2.setImage("resources/alien2_deact.png");
                            m_img_exp_alien_selection1.setImage("resources/alien1_a1.png");
                            m_img_exp_alien_selection2.setImage("resources/alien1_a2.png");
                            r_img_exp_alien_selection1.setImage("resources/blank.png");
                            r_img_exp_alien_selection2.setImage("resources/blank.png");
                            psychoJS.experiment.addData("chosen_alien", "alien1");
                            probs = p1;
                            [transmoney, rand_money] = get(probs);
                            if ((transmoney === 2)) {
                                img_exp_alien_result.setImage("resources/alien1_norm.png");
                                gold_exp.setImage("resources/t.png");
                                totalgold += 1;
                                trialgain = 1;
                            } else {
                                img_exp_alien_result.setImage("resources/alien1_norm.png");
                                gold_exp.setImage("resources/blank.png");
                            }
                        } else {
                            l_img_exp_alien_selection1.setImage("resources/alien1_deact.png");
                            l_img_exp_alien_selection2.setImage("resources/alien1_deact.png");
                            m_img_exp_alien_selection1.setImage("resources/alien2_a1.png");
                            m_img_exp_alien_selection2.setImage("resources/alien2_a2.png");
                            r_img_exp_alien_selection1.setImage("resources/blank.png");
                            r_img_exp_alien_selection2.setImage("resources/blank.png");
                            psychoJS.experiment.addData("chosen_alien", "alien2");
                            probs = p2;
                            [transmoney, rand_money] = get(probs);
                            if ((transmoney === 2)) {
                                img_exp_alien_result.setImage("resources/alien2_norm.png");
                                gold_exp.setImage("resources/t.png");
                                totalgold += 1;
                                trialgain = 1;
                            } else {
                                img_exp_alien_result.setImage("resources/alien2_norm.png");
                                gold_exp.setImage("resources/blank.png");
                            }
                        }
                    } else {
                        if ((flip_sides === true)) {
                            l_img_exp_alien_selection1.setImage("resources/alien2_sp.png");
                            l_img_exp_alien_selection2.setImage("resources/alien2_sp.png");
                            r_img_exp_alien_selection1.setImage("resources/alien1_sp.png");
                            r_img_exp_alien_selection2.setImage("resources/alien1_sp.png");
                            m_img_exp_alien_selection1.setImage("resources/blank.png");
                            m_img_exp_alien_selection2.setImage("resources/blank.png");
                            img_exp_alien_result.setImage("resources/blank.png");
                            gold_exp.setImage("resources/blank.png");
                            select_alien = false;
                            psychoJS.experiment.addData("chosen_alien", "none");
                        } else {
                            l_img_exp_alien_selection1.setImage("resources/alien1_sp.png");
                            l_img_exp_alien_selection2.setImage("resources/alien1_sp.png");
                            r_img_exp_alien_selection1.setImage("resources/alien2_sp.png");
                            r_img_exp_alien_selection2.setImage("resources/alien2_sp.png");
                            m_img_exp_alien_selection1.setImage("resources/blank.png");
                            m_img_exp_alien_selection2.setImage("resources/blank.png");
                            img_exp_alien_result.setImage("resources/blank.png");
                            gold_exp.setImage("resources/blank.png");
                            select_alien = false;
                            psychoJS.experiment.addData("chosen_alien", "none");
                        }
                    }
                }
            }
        }

        // save helper variables
        psychoJS.experiment.addData("select_alien", select_alien);
        psychoJS.experiment.addData("transmoney", transmoney);
        psychoJS.experiment.addData("rand_money", rand_money);
        psychoJS.experiment.addData("totalgold", totalgold);
        psychoJS.experiment.addData("trialgain", trialgain);
        psychoJS.experiment.addData("probs", probs);
      End Routine:
        # precreate variables
        trialgain = 0 # Is gold earned on the current trial?
        transmoney = 'NA'
        select_alien = True

        # determine visual parameters based on choice
        if planet == 'purple':
            if key_resp_exp_alien.keys == 'x':
                if flip_sides == TRUE:
                    m_img_exp_alien_selection1.setImage('resources/alien4_a1.png')
                    m_img_exp_alien_selection2.setImage('resources/alien4_a2.png')
                    l_img_exp_alien_selection1.setImage('resources/blank.png')
                    l_img_exp_alien_selection2.setImage('resources/blank.png')
                    r_img_exp_alien_selection1.setImage('resources/alien3_deact.png')
                    r_img_exp_alien_selection2.setImage('resources/alien3_deact.png')
                    thisExp.addData('chosen_alien', 'alien4')
                    probs = p4
                    (transmoney, rand_money) = get(probs)
                    if transmoney == 2:
                        img_exp_alien_result.setImage('resources/alien4_norm.png')
                        gold_exp.setImage('resources/t.png')
                        totalgold += 1
                        trialgain = 1
                    else:
                        img_exp_alien_result.setImage('resources/alien4_norm.png')
                        gold_exp.setImage('resources/blank.png')
                else:
                    m_img_exp_alien_selection1.setImage('resources/alien3_a1.png')
                    m_img_exp_alien_selection2.setImage('resources/alien3_a2.png')
                    l_img_exp_alien_selection1.setImage('resources/blank.png')
                    l_img_exp_alien_selection2.setImage('resources/blank.png')
                    r_img_exp_alien_selection1.setImage('resources/alien4_deact.png')
                    r_img_exp_alien_selection2.setImage('resources/alien4_deact.png')
                    thisExp.addData('chosen_alien', 'alien3')
                    probs = p3
                    (transmoney, rand_money) = get(probs)
                    if transmoney == 2:
                        img_exp_alien_result.setImage('resources/alien3_norm.png')
                        gold_exp.setImage('resources/t.png')
                        totalgold += 1
                        trialgain = 1
                    else:
                        img_exp_alien_result.setImage('resources/alien3_norm.png')
                        gold_exp.setImage('resources/blank.png')
            elif key_resp_exp_alien.keys == 'm':
                if flip_sides == TRUE:
                    l_img_exp_alien_selection1.setImage('resources/alien4_deact.png')
                    l_img_exp_alien_selection2.setImage('resources/alien4_deact.png')
                    m_img_exp_alien_selection1.setImage('resources/alien3_a1.png')
                    m_img_exp_alien_selection2.setImage('resources/alien3_a2.png')
                    r_img_exp_alien_selection1.setImage('resources/blank.png')
                    r_img_exp_alien_selection2.setImage('resources/blank.png')
                    thisExp.addData('chosen_alien', 'alien3')
                    probs = p3
                    (transmoney, rand_money) = get(probs)
                    if transmoney == 2:
                        img_exp_alien_result.setImage('resources/alien3_norm.png')
                        gold_exp.setImage('resources/t.png')
                        totalgold += 1
                        trialgain = 1
                    else:
                        img_exp_alien_result.setImage('resources/alien3_norm.png')
                        gold_exp.setImage('resources/blank.png')
                else:
                    l_img_exp_alien_selection1.setImage('resources/alien3_deact.png')
                    l_img_exp_alien_selection2.setImage('resources/alien3_deact.png')
                    m_img_exp_alien_selection1.setImage('resources/alien4_a1.png')
                    m_img_exp_alien_selection2.setImage('resources/alien4_a2.png')
                    r_img_exp_alien_selection1.setImage('resources/blank.png')
                    r_img_exp_alien_selection2.setImage('resources/blank.png')
                    thisExp.addData('chosen_alien', 'alien4')
                    probs = p4
                    (transmoney, rand_money) = get(probs)
                    if transmoney == 2:
                        img_exp_alien_result.setImage('resources/alien4_norm.png')
                        gold_exp.setImage('resources/t.png')
                        totalgold += 1
                        trialgain = 1
                    else:
                        img_exp_alien_result.setImage('resources/alien4_norm.png')
                        gold_exp.setImage('resources/blank.png')
            else:
                if flip_sides == TRUE:
                    l_img_exp_alien_selection1.setImage('resources/alien4_sp.png')
                    l_img_exp_alien_selection2.setImage('resources/alien4_sp.png')
                    r_img_exp_alien_selection1.setImage('resources/alien3_sp.png')
                    r_img_exp_alien_selection2.setImage('resources/alien3_sp.png')
                    m_img_exp_alien_selection1.setImage('resources/blank.png')
                    m_img_exp_alien_selection2.setImage('resources/blank.png')
                    img_exp_alien_result.setImage('resources/blank.png')
                    gold_exp.setImage('resources/blank.png')
                    select_alien = False
                    thisExp.addData('chosen_alien', 'none')
                else:
                    l_img_exp_alien_selection1.setImage('resources/alien3_sp.png')
                    l_img_exp_alien_selection2.setImage('resources/alien3_sp.png')
                    r_img_exp_alien_selection1.setImage('resources/alien4_sp.png')
                    r_img_exp_alien_selection2.setImage('resources/alien4_sp.png')
                    m_img_exp_alien_selection1.setImage('resources/blank.png')
                    m_img_exp_alien_selection2.setImage('resources/blank.png')
                    img_exp_alien_result.setImage('resources/blank.png')
                    gold_exp.setImage('resources/blank.png')
                    select_alien = False
                    thisExp.addData('chosen_alien', 'none')

        elif planet == 'red':
            if key_resp_exp_alien.keys == 'x':
                if flip_sides == TRUE:
                    m_img_exp_alien_selection1.setImage('resources/alien2_a1.png')
                    m_img_exp_alien_selection2.setImage('resources/alien2_a2.png')
                    l_img_exp_alien_selection1.setImage('resources/blank.png')
                    l_img_exp_alien_selection2.setImage('resources/blank.png')
                    r_img_exp_alien_selection1.setImage('resources/alien1_deact.png')
                    r_img_exp_alien_selection2.setImage('resources/alien1_deact.png')
                    thisExp.addData('chosen_alien', 'alien2')
                    probs = p2
                    (transmoney, rand_money) = get(probs)
                    if transmoney == 2:
                        img_exp_alien_result.setImage('resources/alien2_norm.png')
                        gold_exp.setImage('resources/t.png')
                        totalgold += 1
                        trialgain = 1
                    else:
                        img_exp_alien_result.setImage('resources/alien2_norm.png')
                        gold_exp.setImage('resources/blank.png')
                else:
                    m_img_exp_alien_selection1.setImage('resources/alien1_a1.png')
                    m_img_exp_alien_selection2.setImage('resources/alien1_a2.png')
                    l_img_exp_alien_selection1.setImage('resources/blank.png')
                    l_img_exp_alien_selection2.setImage('resources/blank.png')
                    r_img_exp_alien_selection1.setImage('resources/alien2_deact.png')
                    r_img_exp_alien_selection2.setImage('resources/alien2_deact.png')
                    thisExp.addData('chosen_alien', 'alien1')
                    probs = p1
                    (transmoney, rand_money) = get(probs)
                    if transmoney == 2:
                        img_exp_alien_result.setImage('resources/alien1_norm.png')
                        gold_exp.setImage('resources/t.png')
                        totalgold += 1
                        trialgain = 1
                    else:
                        img_exp_alien_result.setImage('resources/alien1_norm.png')
                        gold_exp.setImage('resources/blank.png')
            elif key_resp_exp_alien.keys == 'm':
                if flip_sides == TRUE:
                    l_img_exp_alien_selection1.setImage('resources/alien2_deact.png')
                    l_img_exp_alien_selection2.setImage('resources/alien2_deact.png')
                    m_img_exp_alien_selection1.setImage('resources/alien1_a1.png')
                    m_img_exp_alien_selection2.setImage('resources/alien1_a2.png')
                    r_img_exp_alien_selection1.setImage('resources/blank.png')
                    r_img_exp_alien_selection2.setImage('resources/blank.png')
                    thisExp.addData('chosen_alien', 'alien1')
                    probs = p1
                    (transmoney, rand_money) = get(probs)
                    if transmoney == 2:
                        img_exp_alien_result.setImage('resources/alien1_norm.png')
                        gold_exp.setImage('resources/t.png')
                        totalgold += 1
                        trialgain = 1
                    else:
                        img_exp_alien_result.setImage('resources/alien1_norm.png')
                        gold_exp.setImage('resources/blank.png')
                else:
                    l_img_exp_alien_selection1.setImage('resources/alien1_deact.png')
                    l_img_exp_alien_selection2.setImage('resources/alien1_deact.png')
                    m_img_exp_alien_selection1.setImage('resources/alien2_a1.png')
                    m_img_exp_alien_selection2.setImage('resources/alien2_a2.png')
                    r_img_exp_alien_selection1.setImage('resources/blank.png')
                    r_img_exp_alien_selection2.setImage('resources/blank.png')
                    thisExp.addData('chosen_alien', 'alien2')
                    probs = p2
                    (transmoney, rand_money) = get(probs)
                    if transmoney == 2:
                        img_exp_alien_result.setImage('resources/alien2_norm.png')
                        gold_exp.setImage('resources/t.png')
                        totalgold += 1
                        trialgain = 1
                    else:
                        img_exp_alien_result.setImage('resources/alien2_norm.png')
                        gold_exp.setImage('resources/blank.png')
            else:
                if flip_sides == TRUE:
                    l_img_exp_alien_selection1.setImage('resources/alien2_sp.png')
                    l_img_exp_alien_selection2.setImage('resources/alien2_sp.png')
                    r_img_exp_alien_selection1.setImage('resources/alien1_sp.png')
                    r_img_exp_alien_selection2.setImage('resources/alien1_sp.png')
                    m_img_exp_alien_selection1.setImage('resources/blank.png')
                    m_img_exp_alien_selection2.setImage('resources/blank.png')
                    img_exp_alien_result.setImage('resources/blank.png')
                    gold_exp.setImage('resources/blank.png')
                    select_alien = False
                    thisExp.addData('chosen_alien', 'none')
                else:
                    l_img_exp_alien_selection1.setImage('resources/alien1_sp.png')
                    l_img_exp_alien_selection2.setImage('resources/alien1_sp.png')
                    r_img_exp_alien_selection1.setImage('resources/alien2_sp.png')
                    r_img_exp_alien_selection2.setImage('resources/alien2_sp.png')
                    m_img_exp_alien_selection1.setImage('resources/blank.png')
                    m_img_exp_alien_selection2.setImage('resources/blank.png')
                    img_exp_alien_result.setImage('resources/blank.png')
                    gold_exp.setImage('resources/blank.png')
                    select_alien = False
                    thisExp.addData('chosen_alien', 'none')

        # save helper variables
        thisExp.addData("select_alien", select_alien)
        thisExp.addData("transmoney", transmoney)
        thisExp.addData("rand_money", rand_money)
        thisExp.addData("totalgold", totalgold)
        thisExp.addData("trialgain", trialgain)
        thisExp.addData("probs", probs)
    ImageComponent bg_exp
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imgcenter_exp
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent left_alien_exp
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent right_alien_exp
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_exp_alien
      allowedKeys = 'x','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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
  Routine EXP_rocket_selection
    RoutineSettingsComponent EXP_rocket_selection
      saveStartStop = False
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    ImageComponent background_exp_selection
      image = resources/earth.jpg
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent l_img_exp_selection1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent l_img_exp_selection2
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent r_img_exp_selection1
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent r_img_exp_selection2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent m_img_exp_selection1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent m_img_exp_selection2
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine EXP_alien_selection
    RoutineSettingsComponent EXP_alien_selection
      saveStartStop = False
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    ImageComponent background_exp_alien_selection
      saveStartStop = False
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent m_img_exp_alien_selection1
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent m_img_exp_alien_selection2
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent l_img_exp_alien_selection1
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent l_img_exp_alien_selection2
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent r_img_exp_alien_selection1
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.59
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    ImageComponent r_img_exp_alien_selection2
      pos = (0.3, -0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent img_exp_alien_result
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.91
      stopVal [duration (s)] = 1.09
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    ImageComponent gold_exp
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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  Routine total_gold
    RoutineSettingsComponent total_gold
      saveStartStop = False
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    TextComponent text_show_exp_gold
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You got ' + str (totalgold) + ' pieces of treasure.\n\nPress SPACE to continue.'
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    KeyboardComponent key_resp_show_total_gold
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_end
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the end of experiment. Thank you for participating!

        DO NOT close this window yet. After pressing SPACE, wait until the message 'Thank you for your patience' appears on your screen. Then click 'Ok' with your mouse to close the experiment.

        Press SPACE to close the experiment.
  Routine list_choice
    RoutineSettingsComponent list_choice
      saveStartStop = False
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    CodeComponent choose_list
      Code Type = Both
      Before Experiment:
        # custom function for determining transitions
        input = 3
        def get_practice(transprob):
            rand = np.random.rand()
            return int(rand > transprob) ^ (input - 1)

        def get(transprob):
          rand = np.random.rand()
          return int(rand > transprob) ^ (input - 1), rand
      Before JS Experiment:
        // custom function for determining transitions
        function get_practice(transprob) {
            var rand = Math.random();
            var randComparison = rand > transprob;
            var trans_p = Number(randComparison) ^ 2;
            return trans_p;
        }

        function get(transprob) {
            var rand = Math.random();
            var randComparison = rand > transprob;
            var trans = Number(randComparison) ^ 2;
            return [trans, rand];
        }
      Begin Experiment:
        # determine payoff list
        import random
        payoff = random.choice(('1','2', '3', '4','11','12','13','21','22','23','31','32','33','41','42','43'))

        # payoff list will be saved in the main experiment loop

        # define stimuli
        ROCKET_P1 = 'resources/tutrocket1_n.png'
        ROCKET_P1A = 'resources/tutrocket1_a1.png'
        ROCKET_P1B = 'resources/tutrocket1_a2.png'
        ROCKET_P1DEACT= 'resources/tutrocket1_d.png'
        ROCKET_P1SP = 'resources/tutrocket1_s.png'
        ROCKET_P2 = 'resources/tutrocket2_n.png'
        ROCKET_P2DEACT = 'resources/tutrocket2_d.png'
        ROCKET_P2A = 'resources/tutrocket2_a1.png'
        ROCKET_P2B = 'resources/tutrocket2_a2.png'
        ROCKET_P2SP = 'resources/tutrocket2_s.png'
        GREENPLANET = 'resources/tutgreenplanet.jpg'
        YELLOWPLANET = 'resources/tutyellowplanet.jpg'
        ALIEN_P1 = 'resources/tutalien1_n.png'
        ALIEN_P2 = 'resources/tutalien2_n.png'
        ALIEN_P3 = 'resources/tutalien3_n.png'
        ALIEN_P4 = 'resources/tutalien4_n.png'
        ALIEN_P1DEACT = 'resources/tutalien1_d.png'
        ALIEN_P2DEACT = 'resources/tutalien2_d.png'
        ALIEN_P3DEACT = 'resources/tutalien3_d.png'
        ALIEN_P4DEACT = 'resources/tutalien4_d.png'
        ALIEN_P1A = 'resources/tutalien1_a1.png'
        ALIEN_P1B = 'resources/tutalien1_a2.png'
        ALIEN_P2A = 'resources/tutalien2_a1.png'
        ALIEN_P2B = 'resources/tutalien2_a2.png'
        ALIEN_P3A = 'resources/tutalien3_a1.png'
        ALIEN_P3B = 'resources/tutalien3_a2.png'
        ALIEN_P4A = 'resources/tutalien4_a1.png'
        ALIEN_P4B = 'resources/tutalien4_a2.png'
        ALIEN_P1SP = 'resources/tutalien1_s.png'
        ALIEN_P2SP = 'resources/tutalien2_s.png'
        ALIEN_P3SP = 'resources/tutalien3_s.png'
        ALIEN_P4SP = 'resources/tutalien4_s.png'
        ROCKETBL = 'resources/rocket1_norm.png'
        ROCKETBLA = 'resources/rocket1_a1.png'
        ROCKETBLB = 'resources/rocket1_a2.png'
        ROCKETBLDEACT= 'resources/rocket1_deact.png'
        ROCKETGR = 'resources/rocket2_norm.png'
        ROCKETGRDEACT = 'resources/rocket2_deact.png'
        ROCKETGRA = 'resources/rocket2_a1.png'
        ROCKETGRB = 'resources/rocket2_a2.png'
        ROCKETGRSP = 'resources/rocket2_sp.png'
        ROCKETBLSP = 'resources/rocket1_sp.png'
        PURPLEPLANET = 'resources/purpleplanet.jpg'
        REDPLANET = 'resources/redplanet.jpg'
        EARTH = 'resources/earth.jpg'
        BLACK = 'resources/black.png'
        ALIENA = 'resources/alien1_norm.png'
        ALIENB = 'resources/alien2_norm.png'
        ALIENC  = 'resources/alien3_norm.png'
        ALIEND = 'resources/alien4_norm.png'
        ALIENA_DEACT = 'resources/alien1_deact.png'
        ALIENB_DEACT = 'resources/alien2_deact.png'
        ALIENC_DEACT = 'resources/alien3_deact.png'
        ALIEND_DEACT = 'resources/alien4_deact.png'
        ALIENAA = 'resources/alien1_a1.png'
        ALIENAB= 'resources/alien1_a2.png'
        ALIENBA = 'resources/alien2_a1.png'
        ALIENBB = 'resources/alien2_a2.png'
        ALIENCA = 'resources/alien3_a1.png'
        ALIENCB = 'resources/alien3_a2.png'
        ALIENDA = 'resources/alien4_a1.png'
        ALIENDB = 'resources/alien4_a2.png'
        ALIENASP = 'resources/alien1_sp.png'
        ALIENBSP = 'resources/alien2_sp.png'
        ALIENCSP = 'resources/alien3_sp.png'
        ALIENDSP  = 'resources/alien4_sp.png'
        SPACEGOLD = 'resources/t.png'
        SPACEGOLD_OLD = 'resources/t_old.png'
        EMPTYTOKEN = 'resources/empty_token.png'
      Begin JS Experiment:
        // determine payoff list
        payoffList = ['1', '2', '3', '4', '11', '12', '13', '21', '22', '23', '31', '32', '33', '41', '42', '43'];
        payoff = payoffList[Math.floor(Math.random() * payoffList.length)];

        // payoff list will be saved in the main experiment loop

        // define stimuli
        ROCKET_P1 = "resources/tutrocket1_n.png";
        ROCKET_P1A = "resources/tutrocket1_a1.png";
        ROCKET_P1B = "resources/tutrocket1_a2.png";
        ROCKET_P1DEACT = "resources/tutrocket1_d.png";
        ROCKET_P1SP = "resources/tutrocket1_s.png";
        ROCKET_P2 = "resources/tutrocket2_n.png";
        ROCKET_P2DEACT = "resources/tutrocket2_d.png";
        ROCKET_P2A = "resources/tutrocket2_a1.png";
        ROCKET_P2B = "resources/tutrocket2_a2.png";
        ROCKET_P2SP = "resources/tutrocket2_s.png";
        GREENPLANET = "resources/tutgreenplanet.jpg";
        YELLOWPLANET = "resources/tutyellowplanet.jpg";
        ALIEN_P1 = "resources/tutalien1_n.png";
        ALIEN_P2 = "resources/tutalien2_n.png";
        ALIEN_P3 = "resources/tutalien3_n.png";
        ALIEN_P4 = "resources/tutalien4_n.png";
        ALIEN_P1DEACT = "resources/tutalien1_d.png";
        ALIEN_P2DEACT = "resources/tutalien2_d.png";
        ALIEN_P3DEACT = "resources/tutalien3_d.png";
        ALIEN_P4DEACT = "resources/tutalien4_d.png";
        ALIEN_P1A = "resources/tutalien1_a1.png";
        ALIEN_P1B = "resources/tutalien1_a2.png";
        ALIEN_P2A = "resources/tutalien2_a1.png";
        ALIEN_P2B = "resources/tutalien2_a2.png";
        ALIEN_P3A = "resources/tutalien3_a1.png";
        ALIEN_P3B = "resources/tutalien3_a2.png";
        ALIEN_P4A = "resources/tutalien4_a1.png";
        ALIEN_P4B = "resources/tutalien4_a2.png";
        ALIEN_P1SP = "resources/tutalien1_s.png";
        ALIEN_P2SP = "resources/tutalien2_s.png";
        ALIEN_P3SP = "resources/tutalien3_s.png";
        ALIEN_P4SP = "resources/tutalien4_s.png";
        ROCKETBL = "resources/rocket1_norm.png";
        ROCKETBLA = "resources/rocket1_a1.png";
        ROCKETBLB = "resources/rocket1_a2.png";
        ROCKETBLDEACT = "resources/rocket1_deact.png";
        ROCKETGR = "resources/rocket2_norm.png";
        ROCKETGRDEACT = "resources/rocket2_deact.png";
        ROCKETGRA = "resources/rocket2_a1.png";
        ROCKETGRB = "resources/rocket2_a2.png";
        ROCKETGRSP = "resources/rocket2_sp.png";
        ROCKETBLSP = "resources/rocket1_sp.png";
        PURPLEPLANET = "resources/purpleplanet.jpg";
        REDPLANET = "resources/redplanet.jpg";
        EARTH = "resources/earth.jpg";
        BLACK = "resources/black.png";
        ALIENA = "resources/alien1_norm.png";
        ALIENB = "resources/alien2_norm.png";
        ALIENC = "resources/alien3_norm.png";
        ALIEND = "resources/alien4_norm.png";
        ALIENA_DEACT = "resources/alien1_deact.png";
        ALIENB_DEACT = "resources/alien2_deact.png";
        ALIENC_DEACT = "resources/alien3_deact.png";
        ALIEND_DEACT = "resources/alien4_deact.png";
        ALIENAA = "resources/alien1_a1.png";
        ALIENAB = "resources/alien1_a2.png";
        ALIENBA = "resources/alien2_a1.png";
        ALIENBB = "resources/alien2_a2.png";
        ALIENCA = "resources/alien3_a1.png";
        ALIENCB = "resources/alien3_a2.png";
        ALIENDA = "resources/alien4_a1.png";
        ALIENDB = "resources/alien4_a2.png";
        ALIENASP = "resources/alien1_sp.png";
        ALIENBSP = "resources/alien2_sp.png";
        ALIENCSP = "resources/alien3_sp.png";
        ALIENDSP = "resources/alien4_sp.png";
        SPACEGOLD = "resources/t.png";
        SPACEGOLD_OLD = "resources/t_old.png";
        EMPTYTOKEN = "resources/empty_token.png";
    CodeComponent code_save_static_p
      Code Type = Auto->JS
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      Begin Experiment:
        # define static probabilites that are later saved in the probe phase
        if payoff in ['1', '2', '11', '12', '13', '21', '22', '23']:
            static_probability_1 = 0.3
            static_probability_2 = 0.7
            if payoff in ['1', '11', '12', '13']:
                static_probability_3 = 0.6
                static_probability_4 = 0.4
            elif payoff in ['2', '21', '22', '23']:
                static_probability_3 = 0.4
                static_probability_4 = 0.6
        elif payoff in ['3', '4', '31', '32', '33', '41', '42', '43']:
            static_probability_1 = 0.7
            static_probability_2 = 0.3
            if payoff in ['3', '31', '32', '33']:
                static_probability_3 = 0.4
                static_probability_4 = 0.6
            elif payoff in ['4', '41', '42', '43']:
                static_probability_3 = 0.6
                static_probability_4 = 0.4
  Routine PROBE
    RoutineSettingsComponent PROBE
      saveStartStop = False
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    TextComponent probe_question
      letterHeight = 0.03
      pos = (0, 0.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Which alien was more likely to share gold?
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    ImageComponent l_img_probe
      image [set every repeat] = $probe_la
      pos = (-0.3, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent r_img_probe
      image [set every repeat] = $probe_ra
      pos = (0.3, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_probe
      allowedKeys = 'x','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_probe
      Code Type = Auto->JS
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      Begin Routine:
        # define static probabilities to simplify analysis
        static_probabilities = {
            'resources/alien1_norm.png': static_probability_1,
            'resources/alien2_norm.png': static_probability_2,
            'resources/alien3_norm.png': static_probability_3,
            'resources/alien4_norm.png': static_probability_4
        }

        if probe_la in static_probabilities and probe_ra in static_probabilities:
            static_probability_l = static_probabilities[probe_la]
            static_probability_r = static_probabilities[probe_ra]

        # save payoff info in each row for simplified analysis
        thisExp.addData('payoff_list', payoff)

        # save phase
        thisExp.addData("phase", 'probe')

        # save static probabilities
        thisExp.addData('static_probability_left', static_probability_l)
        thisExp.addData('static_probability_right', static_probability_r)
      End Routine:
        # Initialize accuracy to 'none' or another default value
        accuracy = 'none'

        if static_probability_l > static_probability_r:
            if key_resp_probe.keys == 'x':
                accuracy = 1
            elif key_resp_probe.keys == 'm':
                accuracy = 0

        if static_probability_r > static_probability_l:
            if key_resp_probe.keys == 'm':
                accuracy = 1
            elif key_resp_probe.keys == 'x':
                accuracy = 0

        # This line adds the accuracy data to the current experiment's data handler.
        thisExp.addData('accuracy', accuracy)
  Routine transition
    RoutineSettingsComponent transition
      saveStartStop = False
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    TextComponent text_transition
      letterHeight = 0.03
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we will begin the follow up experiment. The aim of this task is to select the alien in each pair which is more likely to have spacegold. This task will be played only once, without any practice.  Again, press X for left item and M for right item.

        Press SPACE  to continue.
    KeyboardComponent key_resp_transition
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine transition_to_post
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    KeyboardComponent key_transition_to_post
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_transition_to_post
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Answer the following questions based on your experience playing this game.

        Press SPACE to continue.
  Routine post_task
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    KeyboardComponent key_resp
      allowedKeys = ('x', 'm', 'space', '1', '2', '3', '4')
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent img_up_l
      image [set every repeat] = $left_up_img
      pos [set every repeat] = pos_img_left_up
      saveStartStop = False
      size [set every repeat] = size_left_up_img
      startVal [time (s)] = 0.0
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    ImageComponent img_up_r
      image [set every repeat] = $right_up_img
      pos = [0.3,0.15]
      saveStartStop = False
      size [set every repeat] = size_right_img_up
      startVal [time (s)] = 0.0
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    ImageComponent img_down_l
      image [set every repeat] = $left_down_img_1
      pos [set every repeat] = [-0.3,-0.27]
      saveStartStop = False
      size [set every repeat] = size
      startVal [time (s)] = 0.0
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    ImageComponent img_down_l2
      image [set every repeat] = $left_down_img_2
      pos = [-0.1,-0.27]
      saveStartStop = False
      size [set every repeat] = size
      startVal [time (s)] = 0.0
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    ImageComponent image_down_r
      image [set every repeat] = $right_down_img_1
      pos = [0.1,-0.27]
      saveStartStop = False
      size [set every repeat] = size
      startVal [time (s)] = 0.0
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    ImageComponent img_down_r2
      image [set every repeat] = $right_down_img_2
      pos = [0.3,-0.27]
      saveStartStop = False
      size [set every repeat] = size
      startVal [time (s)] = 0.0
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    TextComponent up_text
      letterHeight = 0.025
      pos [set every repeat] = pos_text_up
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_up
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    TextComponent down_text
      letterHeight = 0.025
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_down
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ['Very Unlikely\n0%', 'Unsure \n50%', 'Very Likely\n100%']
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.9, 0.03)
      startVal [time (s)] = 0.0
      stopVal [condition] = show_slider
      styles = rating
      ticks = [0,50,100]
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    CodeComponent code_phase_saving
      Code Type = Auto->JS
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      Begin Routine:
        # save payoff info in each row for simplified analysis
        thisExp.addData('payoff_list', payoff)

        # save phase info
        thisExp.addData("phase", 'post')
  Routine fixation
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    PolygonComponent fixation_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixation_duration
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    CodeComponent code_fixation
      Code Type = Both
      Begin JS Routine:
        // define fixation duration as a random number between 0.3 and 0.5
        fixation_duration = 0.3 + Math.random() * (0.5 - 0.3);
      Begin Routine:
        # define fixation duration as a random number between 0.3 and 0.5
        fixation_duration = random.uniform(0.3, 0.5)
Flow
  Routine list_choice
  LoopInitiator loop_tutorial_01 loopType="TrialHandler"
    conditionsFile = resources/TUTORIAL_01.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instructions': 'In this game, you will be taking a spaceship from earth to look for space treasure on two different planets. Press SPACE to continue.', 'left_image': 'tutrocket1_n.png', 'right_image': 'tutrocket2_n.png', 'middle_image': 'blank.png', 'background': 'blank.png'},
      {'instructions': 'Each planet has two aliens on it. And each alien has its own space treasure mine. Press SPACE to continue.', 'left_image': 'tutalien1_n.png', 'right_image': 'tutalien2_n.png', 'middle_image': 'blank.png', 'background': 'blank.png'},
      {'instructions': 'On each planet you will pick one alien to ask for space treasure. These aliens are nice so if an alien just brought treasure up from the mine it will share it with you. Press SPACE to continue.', 'left_image': 'tutalien1_n.png', 'right_image': 'tutalien2_n.png', 'middle_image': 'blank.png', 'background': 'blank.png'},
      {'instructions': 'For each choice choose the left alien by pressing the X key and the right alien by pressing the M key. Press SPACE to practice.', 'left_image': 'tutalien1_n.png', 'right_image': 'tutalien2_n.png', 'middle_image': 'blank.png', 'background': 'blank.png'}]
    Routine TUTORIAL_01
  LoopTerminator loop_tutorial_01
  LoopInitiator loop_try_01 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine TRY_01
    Routine TRY_01_selection
  LoopTerminator loop_try_01
  LoopInitiator loop_tutorial_02 loopType="TrialHandler"
    conditionsFile = resources/TUTORIAL_02.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('text', 'After you choose an alien, you will find out whether you got treasure. Which looks like this. Press “space” to continue.')]),
      OrderedDict([('text', "If an alien has a good mine that means it can easily dig up space treasure and it will be very likely to have some to share. It might not have treasure EVERY time you ask, but it will most of the time. Another alien might have a bad mine that is hard to dig through at the moment, and won't have treasure to share most times you ask. Press “space” to continue.")]),
      OrderedDict([('text', 'For example, the alien on the yellow planet has a good mine right now. Try asking the left alien for treasure 10 times by pressing the x keys. Press “space” to practice.')])]
    Routine TUTORIAL_02
  LoopTerminator loop_tutorial_02
  LoopInitiator loop_try_02 loopType="TrialHandler"
    conditionsFile = resources/TRY_02.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('try_list', 'x')]),
      OrderedDict([('try_list', 'm')]),
      OrderedDict([('try_list', 'x')]),
      OrderedDict([('try_list', 'x')]),
      OrderedDict([('try_list', 'x')]),
      OrderedDict([('try_list', 'm')]),
      OrderedDict([('try_list', 'x')]),
      OrderedDict([('try_list', 'm')]),
      OrderedDict([('try_list', 'x')]),
      OrderedDict([('try_list', 'x')])]
    Routine TRY_02
    Routine TRY_02_selection
  LoopTerminator loop_try_02
  Routine TUTORIAL_3_1
  Routine TUTORIAL_3_2
  LoopInitiator loop_try_03 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 20
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    Routine TRY_03
    Routine TRY_03_selection
  LoopTerminator loop_try_03
  LoopInitiator loop_tutorial_04 loopType="TrialHandler"
    conditionsFile = resources/TUTORIAL_04.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instructions': "Good. You might have learned that this alien had treasure more often. Also, even if this alien had a better mine, you couldn't be sure if it had treasure all the time. Each alien is like a game of chance, you can never be sure but you can guess.\n\nPress SPACE to continue.", 'middle_image': 'tutalien2_n.png', 'size_middle_image': 0.3, 'left_image': 'blank.png', 'right_image': 'blank.png'},
      {'instructions': "The treasure an alien can give will change during the game. Those with a good mine might get to a part of the mine that is hard to dig. Those with little to share might find easier treasure to dig. For example, it is possible that the alien that was giving you treasure most of the time in the beginning, gets to a part of the mine that is hard to dig and starts sharing treasure less often. These changes in an alien's mine will happen slowly, so try to focus to get as much treasure as possible. \n\nPress SPACE to continue.", 'middle_image': 'blank.png', 'size_middle_image': 0.3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,
      {'instructions': 'While the chance an alien has treasure to share changes over time, it changes slowly. So, an alien with a good treasure mine right now will probably stay good for some time. To find the alien with the best mine at each point in time, you must concentrate.\n\nPress SPACE to continue.', 'middle_image': 'blank.png', 'size_middle_image': 0.3, 'left_image': 'blank.png', 'right_image': 'blank.png'},
      {'instructions': 'The aliens will appear on different sides from trial to trial, so it is important to remember what each alien looks like, as their position will change.\n\nPress SPACE to continue.', 'middle_image': 'blank.png', 'size_middle_image': 0.3, 'left_image': 'blank.png', 'right_image': 'blank.png'}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
    Routine TUTORIAL_04
  LoopTerminator loop_tutorial_04
  Routine count_practice_gold
  LoopInitiator loop_practice loopType="TrialHandler"
    conditionsFile = resources/payoff/payoff_test1.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('p1', 0.735004267), ('p2', 0.463481854), ('p3', 0.405760115), ('p4', 0.281474585), ('flip_sides', False)]),
      OrderedDict([('p1', 0.726648013), ('p2', 0.470939609), ('p3', 0.409498917), ('p4', 0.277760257), ('flip_sides', True)]),
      OrderedDict([('p1', 0.735612575), ('p2', 0.495843388), ('p3', 0.398886568), ('p4', 0.270517849), ('flip_sides', False)]),
      OrderedDict([('p1', 0.739079361), ('p2', 0.493294126), ('p3', 0.379898073), ('p4', 0.274263712), ('flip_sides', True)]),
      OrderedDict([('p1', 0.732547828), ('p2', 0.530188502), ('p3', 0.358463113), ('p4', 0.288243949), ('flip_sides', False)]),
      OrderedDict([('p1', 0.74071327), ('p2', 0.492907968), ('p3', 0.38268738), ('p4', 0.316009642), ('flip_sides', False)]),
      OrderedDict([('p1', 0.741200658), ('p2', 0.454369038), ('p3', 0.410091306), ('p4', 0.29370718), ('flip_sides', False)]),
      OrderedDict([('p1', 0.741158735), ('p2', 0.436334861), ('p3', 0.397919021), ('p4', 0.322663367), ('flip_sides', False)]),
      OrderedDict([('p1', 0.722024971), ('p2', 0.426368741), ('p3', 0.387561009), ('p4', 0.321962032), ('flip_sides', True)]),
      OrderedDict([('p1', 0.730172366), ('p2', 0.452344181), ('p3', 0.407348494), ('p4', 0.30699842), ('flip_sides', True)]),
      OrderedDict([('p1', 0.747999597), ('p2', 0.428097866), ('p3', 0.402942073), ('p4', 0.253366353), ('flip_sides', True)]),
      OrderedDict([('p1', 0.721501316), ('p2', 0.407875273), ('p3', 0.406383509), ('p4', 0.285708472), ('flip_sides', True)])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
    Routine PRACTICE_rocket
    Routine PRACTICE_rocket_selection
    LoopInitiator alien_practice loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = show_alien
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      Routine PRACTICE_alien
      Routine PRACTICE_alien_selection
    LoopTerminator alien_practice
  LoopTerminator loop_practice
  Routine TUT_22
  Routine TUT_23
  Routine TUT_24
  Routine TUT_25
  Routine TUT_26
  Routine TUT_27
  Routine TUT_28
  LoopInitiator loop_exp loopType="TrialHandler"
    conditionsFile = $'resources/payoff/payoff_' + payoff + '.csv'
    loopType = sequential
    nReps = 1
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    Routine EXP_rocket
    Routine EXP_rocket_selection
    LoopInitiator alien loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = show_alien
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      Routine EXP_alien
      Routine EXP_alien_selection
    LoopTerminator alien
  LoopTerminator loop_exp
  Routine total_gold
  Routine transition
  LoopInitiator probe_loop loopType="TrialHandler"
    conditionsFile = resources/probe_alien_order.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'probe_la': 'resources/alien1_norm.png', 'probe_ra': 'resources/alien2_norm.png'},
      {'probe_la': 'resources/alien1_norm.png', 'probe_ra': 'resources/alien3_norm.png'},
      {'probe_la': 'resources/alien1_norm.png', 'probe_ra': 'resources/alien4_norm.png'},
      {'probe_la': 'resources/alien2_norm.png', 'probe_ra': 'resources/alien3_norm.png'},
      {'probe_la': 'resources/alien2_norm.png', 'probe_ra': 'resources/alien4_norm.png'},
      {'probe_la': 'resources/alien3_norm.png', 'probe_ra': 'resources/alien4_norm.png'},
      {'probe_la': 'resources/alien2_norm.png', 'probe_ra': 'resources/alien1_norm.png'},
      {'probe_la': 'resources/alien3_norm.png', 'probe_ra': 'resources/alien1_norm.png'},
      {'probe_la': 'resources/alien4_norm.png', 'probe_ra': 'resources/alien1_norm.png'},
      {'probe_la': 'resources/alien3_norm.png', 'probe_ra': 'resources/alien2_norm.png'},
      {'probe_la': 'resources/alien4_norm.png', 'probe_ra': 'resources/alien2_norm.png'},
      {'probe_la': 'resources/alien4_norm.png', 'probe_ra': 'resources/alien3_norm.png'}]
    Routine fixation
    Routine PROBE
  LoopTerminator probe_loop
  Routine transition_to_post
  LoopInitiator post_loop loopType="TrialHandler"
    conditionsFile = resources/post_test.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text_up': 'If you picked this spaceship,', 'pos_text_up': [0, 0.38], 'text_down': 'Which planet would you be most likely to land on? Select by pressing X for left and M for right planet.', 'pos_img_left_up': [-0.3, 0.15], 'left_up_img': 'resources/rocket1_a1.png', 'right_up_img': 'resources/rocket2_norm.png', 'left_down_img_1': 'resources/post_purpleplanet.jpg', 'left_down_img_2': 'resources/blank.png', 'right_down_img_1': 'resources/blank.png', 'right_down_img_2': 'resources/post_redplanet.jpg', 'size': 0.3, 'show_slider': ' ', 'allowed_keys': ('x', 'm')},
      {'text_up': 'If you picked this spaceship,', 'pos_text_up': [0, 0.38], 'text_down': 'Which planet would you be most likely to land on? Select by pressing X for left and M for right planet.', 'pos_img_left_up': [-0.3, 0.15], 'left_up_img': 'resources/rocket1_norm.png', 'right_up_img': 'resources/rocket2_a1.png', 'left_down_img_1': 'resources/post_purpleplanet.jpg', 'left_down_img_2': 'resources/blank.png', 'right_down_img_1': 'resources/blank.png', 'right_down_img_2': 'resources/post_redplanet.jpg', 'size': 0.3, 'show_slider': ' ', 'allowed_keys': ('x', 'm')},
      {'text_up': 'If you saw the Purple planet...', 'pos_text_up': [0, 0.38], 'text_down': 'Which spaceship were you most likely to have picked? Select by pressing X for left and M for right spaceship.', 'pos_img_left_up': [0, 0.15], 'left_up_img': 'resources/post_purpleplanet.jpg', 'right_up_img': 'resources/blank.png', 'left_down_img_1': 'resources/rocket1_norm.png', 'left_down_img_2': 'resources/blank.png', 'right_down_img_1': 'resources/blank.png', 'right_down_img_2': 'resources/rocket2_norm.png', 'size': 0.3, 'show_slider': ' ', 'allowed_keys': ('x', 'm')},
      {'text_up': 'If you saw the Red planet...', 'pos_text_up': [0, 0.38], 'text_down': 'Which spaceship were you most likely to have picked? Select by pressing X for left and M for right spaceship.', 'pos_img_left_up': [0, 0.15], 'left_up_img': 'resources/post_redplanet.jpg', 'right_up_img': 'resources/blank.png', 'left_down_img_1': 'resources/rocket1_norm.png', 'left_down_img_2': 'resources/blank.png', 'right_down_img_1': 'resources/blank.png', 'right_down_img_2': 'resources/rocket2_norm.png', 'size': 0.3, 'show_slider': ' ', 'allowed_keys': ('x', 'm')}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
    Routine fixation
    Routine post_task
  LoopTerminator post_loop
  Routine end
